#include "LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.res"
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_error_codes.hs_" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_Cytomat.hs_" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_Teleshake.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_ReadFluoescence.hs_" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_FileProcessing.hs_" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_BarcodeRead.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
global device ML_STAR ("LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.lay", "ML_STAR", hslTrue);
global device HxGen5 ("LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.lay", "HxGen5", hslTrue);
variable error_code;
variable str_ErrorMessage;
variable RunID;
variable grip_height;
variable barcode;
variable path_GetCytomatPosition;
variable path_CytomatPosition;
variable path_SendReadingsToDB;
variable CytomatPosition;
variable plate_present;
variable str_Barcode;
variable Is_Simulation;
variable PlateBarcode;
variable path_PlateBarcode;
variable path_UpdateScheduler;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SHOU_ERROR_CODES::_InitLibrary();
    SHOU_CYTOMAT::_InitLibrary();
    SHOU_TELESHAKE::_InitLibrary();
    SHOU_READFLUOESCENCE::_InitLibrary();
    SHOU_FILEPROCESSING::_InitLibrary();
    SHOU_BARCODEREAD::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    error_code = SHOU_ERROR_CODES::shou_error_codes_Open();
    Is_Simulation = HSLML_STAR::IsSimulatorMode(ML_STAR);
    grip_height = 12;
    MECC::TraceComment(Translate("--------------------------------------------------\nget plate position in cytomat -- START\n--------------------------------------------------"));
    RunID = Util::GetUniqueRunId();
    path_GetCytomatPosition = StrConcat4(Translate("C:\Program Files\HAMILTON\Python\ChamFL_Flourscent\GetPlateCytomatPosition.exe"), Translate(""), Translate(""), Translate(""));
    path_CytomatPosition = StrConcat4(Translate("C:\\EvoTaskFiles\\"), RunID, Translate("_CytomatPos.txt"), Translate(""));
    path_PlateBarcode = StrConcat4(Translate("C:\\EvoTaskFiles\\"), RunID, Translate("_PlateBarcode.txt"), Translate(""));
    TrcTrace(Translate("path_GetCytomatPositions:  "), path_GetCytomatPosition);
    TrcTrace(Translate("path_CytomatPositions:  "), path_CytomatPosition);
    TrcTrace(Translate("path_PlateBarcode:  "), path_PlateBarcode);
    Util::SyncShell(path_GetCytomatPosition, 1, error_code);
    if (error_code != 0)
    {
      abort;
    }
    SHOU_FILEPROCESSING::CytomatPosProcessing(CytomatPosition, path_CytomatPosition);
    TrcTrace(Translate("CytomatPosition:  "), CytomatPosition);
    SHOU_FILEPROCESSING::STR_Processing(path_PlateBarcode, PlateBarcode);
    TrcTrace(Translate("PlateBarcode:  "), PlateBarcode);
    MECC::TraceComment(Translate("--------------------------------------------------\nget plate position in cytomat -- END\n--------------------------------------------------"));
    if (Is_Simulation == 0)
    {
      MECC::TraceComment(Translate("---------------------------------------------\nUnloading plate from cytomat -- START\n---------------------------------------------"));
      error_code = SHOU_CYTOMAT::shou_Cytomat_Open(ML_STAR, str_ErrorMessage);
      if (error_code != 0)
      {
        abort;
      }
      error_code = SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPosition, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
      if (error_code != 0)
      {
        abort;
      }
      error_code = SHOU_CYTOMAT::shou_Cytomat_Close(ML_STAR, str_ErrorMessage);
      MECC::TraceComment(Translate("---------------------------------------------\nUnloading plate from cytomat -- END\n---------------------------------------------"));
      MECC::TraceComment(Translate("----------------------------------------------\nBarcode Read -- START\n----------------------------------------------"));
      error_code = SHOU_BARCODEREAD::BarcodeRead_Unlode_1mlShort(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Barcode, str_Barcode, 1, plate_present, str_ErrorMessage);
      if (str_Barcode != PlateBarcode)
      {
        abort;
      }
      MECC::TraceComment(Translate("----------------------------------------------\nBarcode Read -- END\n----------------------------------------------"));
      MECC::TraceComment(Translate("----------------------------------------------\nTeleshake -- START\n----------------------------------------------"));
      error_code = SHOU_TELESHAKE::shou_Teleshake_ShakeDW(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Teleshake, str_ErrorMessage);
      MECC::TraceComment(Translate("----------------------------------------------\nTeleshake -- END\n----------------------------------------------"));
    }
    onerror goto errLabel_1 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("RemoveLid"), Translate("Error_RemovingLid"), str_ErrorMessage);
      abort;
    }   /* end if from skip handler if no error */
    onerror goto errLabel_2 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("RemoveLid"), Translate("Error_PlacingLid"), str_ErrorMessage);
      abort;
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------------------------------------------\nRemoving the lid of the plate -- END\n----------------------------------------------"));
    if (Is_Simulation == 0)
    {
      MECC::TraceComment(Translate("----------------------------------------------\nMeasure fluorescence -- START\n----------------------------------------------"));
      error_code = SHOU_READFLUOESCENCE::ReadGFPandRFP(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, Translate(""));
      if (error_code != 0)
      {
        abort;
      }
      MECC::TraceComment(Translate("----------------------------------------------\nMeasure red fluorescence -- END\n----------------------------------------------"));
    }
    MECC::TraceComment(Translate("----------------------------------------------\nput lid on - START\n----------------------------------------------"));
    onerror goto errLabel_3 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("PutLidOn"), Translate("Error_GetLid"), str_ErrorMessage);
      abort;
    }   /* end if from skip handler if no error */
    onerror goto errLabel_4 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("PutLidOn"), Translate("Error_PlaceLid"), str_ErrorMessage);
      abort;
    }   /* end if from skip handler if no error */
    MECC::TraceComment(Translate("----------------------------------------------\nput lid on - END\n----------------------------------------------"));
    if (Is_Simulation == 0)
    {
      MECC::TraceComment(Translate("----------------------------------------------\nLoading plate to cytomat - START\n----------------------------------------------"));
      error_code = SHOU_CYTOMAT::shou_Cytomat_Open(ML_STAR, str_ErrorMessage);
      if (error_code != 0)
      {
        abort;
      }
      error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPosition, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
      if (error_code != 0)
      {
        abort;
      }
      error_code = SHOU_CYTOMAT::shou_Cytomat_Close(ML_STAR, str_ErrorMessage);
      MECC::TraceComment(Translate("----------------------------------------------\nLoading plate to cytomat - END\n----------------------------------------------"));
    }
    MECC::TraceComment(Translate("--------------------------------------------------\nSending the readings to the database -- START\n--------------------------------------------------"));
    path_SendReadingsToDB = StrConcat4(Translate("C:\Program Files\HAMILTON\Python\ChamFL_Flourscent\InsertFLReadings.exe"), Translate(" "), PlateBarcode, Translate(""));
    if (Is_Simulation == 1)
    {
      path_SendReadingsToDB = StrConcat4(path_SendReadingsToDB, Translate(" "), Translate("--test-mode"), Translate(""));
    }
    Util::SyncShell(path_SendReadingsToDB, 1, error_code);
    if (error_code != 0)
    {
      abort;
    }
    MECC::TraceComment(Translate("--------------------------------------------------\nSending the readings to the database -- END\n--------------------------------------------------"));
    MECC::TraceComment(Translate("--------------------------------------------------\nRescheduling Champions_FL_Python -- START\n--------------------------------------------------"));
    path_UpdateScheduler = StrConcat4(Translate("C:\Program Files\HAMILTON\Python\ChamFL_Flourscent\UpdateScheduler.exe"), Translate(" "), PlateBarcode, Translate(""));
    if (Is_Simulation == 1)
    {
      path_SendReadingsToDB = StrConcat4(path_SendReadingsToDB, Translate(" "), Translate("--test-mode"), Translate(""));
    }
    Util::SyncShell(path_UpdateScheduler, 1, error_code);
    MECC::TraceComment(Translate("--------------------------------------------------\nRescheduling Champions_FL_Python -- END\n--------------------------------------------------"));
    SHOU_ERROR_CODES::_ExitLibrary();
    SHOU_CYTOMAT::_ExitLibrary();
    SHOU_TELESHAKE::_ExitLibrary();
    SHOU_READFLUOESCENCE::_ExitLibrary();
    SHOU_FILEPROCESSING::_ExitLibrary();
    SHOU_BARCODEREAD::_ExitLibrary();
  } }
