#include "LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.res"
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_error_codes.hs_" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_Cytomat.hs_" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_Teleshake.hs_" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_ReadFluoescence.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "HSLMthLib.hsl" }
global device ML_STAR ("LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.lay", "ML_STAR", hslTrue);
global device HxGen5 ("LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.lay", "HxGen5", hslTrue);
variable error_code;
variable str_ErrorMessage;
variable RunID;
variable plateID;
variable grip_height;
variable user_cytomat_position;
variable cytomat_slot;
variable barcode;
variable speed2;
variable time;
variable strTaskFolder;
variable DbQueryIndex;
variable query;
variable read_variable;
variable file_CytomatRead;
variable dbResponse;
file read_1;
file read_2;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SHOU_ERROR_CODES::_InitLibrary();
    SHOU_CYTOMAT::_InitLibrary();
    SHOU_TELESHAKE::_InitLibrary();
    SHOU_READFLUOESCENCE::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    error_code = SHOU_ERROR_CODES::shou_error_codes_Open();
    str_ErrorMessage = Translate("");
    error_code = 0;
    user_cytomat_position = 4;
    cytomat_slot = user_cytomat_position;
    error_code = SHOU_ERROR_CODES::shou_error_codes_Open();
    RunID = Util::GetUniqueRunId();
    plateID = Translate("plate");
    grip_height = 12;
    speed2 = 1200;
    time = 30;
    sql_initialize();
    query = Translate("exec dbo.Cytomat_reading");
    file_CytomatRead = exec_query(query);
    read_1.AddField(1, read_variable, hslString);
    read_1.SetDelimiter(hslAsciiText);
    if( 0 == read_1.Open(file_CytomatRead, hslRead) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, file_CytomatRead, "HxMetEdCompCmd");
    }
    if( 0 == read_1.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    if( 0 != read_1.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    read_1.RemoveFields();
    cytomat_slot = read_variable;
    if (cytomat_slot == "")
    {
      query = Translate("SELECT Cytomat.CytomatPos FROM Cytomat INNER JOIN AncestPlatesInExperiments ON Cytomat.PlateID=AncestPlatesInExperiments.PlateID INNER JOIN Experiments ON AncestPlatesInExperiments.ExperimentID=Experiments.ExperimentID WHERE (Experiments.ScheduledToRun=1)");
      file_CytomatRead = exec_query(query);
      read_2.AddField(1, read_variable, hslString);
      read_2.SetDelimiter(hslAsciiText);
      if( 0 == read_2.Open(file_CytomatRead, hslRead) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, file_CytomatRead, "HxMetEdCompCmd");
      }
      if( 0 == read_2.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      if( 0 != read_2.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      read_2.RemoveFields();
      cytomat_slot = read_variable;
    }
    cytomat_slot = StrIVal(cytomat_slot);
    TrcTrace(Translate(""), cytomat_slot);
    error_code = SHOU_CYTOMAT::shou_Cytomat_Open(ML_STAR, str_ErrorMessage);
    if (error_code != 0)
    {
      abort;
    }
    error_code = SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, cytomat_slot, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
    if (error_code != 0)
    {
      abort;
    }
    error_code = SHOU_CYTOMAT::shou_Cytomat_Close(ML_STAR, str_ErrorMessage);
    error_code = SHOU_TELESHAKE::shou_Teleshake_open(ML_STAR, RunID, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("test_shou_teleshake"), Translate("open_error"), str_ErrorMessage);
      abort;
    }
    error_code = SHOU_TELESHAKE::shou_Teleshake_ShakeDW(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Teleshake, str_ErrorMessage);
    error_code = SHOU_TELESHAKE::shou_Teleshake_close(str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("test_shou_teleshake"), Translate("teleshake_close_error"), str_ErrorMessage);
      abort;
    }
    onerror goto errLabel_1 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_1 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("RemoveLid"), Translate("Error_RemovingLid"), str_ErrorMessage);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_2 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_2 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("RemoveLid"), Translate("Error_PlacingLid"), str_ErrorMessage);
    }   /* end if from skip handler if no error */
    error_code = SHOU_READFLUOESCENCE::ReadGFPandRFP(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, Translate(""));
    error_code = SHOU_READFLUOESCENCE::ReadGFPabdRFPnamed(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, Translate(""));
    onerror goto errLabel_3 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_3 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("PutLidOn"), Translate("Error_GetLid"), str_ErrorMessage);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_4 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_4 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("PutLidOn"), Translate("Error_PlaceLid"), str_ErrorMessage);
      abort;
    }   /* end if from skip handler if no error */
    error_code = SHOU_CYTOMAT::shou_Cytomat_Open(ML_STAR, str_ErrorMessage);
    if (error_code != 0)
    {
      abort;
    }
    error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, cytomat_slot, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
    if (error_code != 0)
    {
      abort;
    }
    error_code = SHOU_CYTOMAT::shou_Cytomat_Close(ML_STAR, str_ErrorMessage);
    SHOU_ERROR_CODES::_ExitLibrary();
    SHOU_CYTOMAT::_ExitLibrary();
    SHOU_TELESHAKE::_ExitLibrary();
    SHOU_READFLUOESCENCE::_ExitLibrary();
  } }
