 namespace _Method { #include "HSLML_STARLib.hsl" }
 namespace _Method { #include "HSLUtilLib.hsl" }
 namespace _Method { #include "HSLStrLib.hsl" }
 namespace _Method { #include "HSLSeqLib.hsl" }
 namespace _Method { #include "shou_Wash.hs_" }
 namespace _Method { #include "shou_ErrorCleanup.hs_" }
 namespace _Method { #include "shou_BarcodeRead.hs_" }
 namespace _Method { #include "shou_ReadOD.hs_" }
 namespace _Method { #include "HSLTrcLib.hsl" }
 namespace _Method { #include "shou_Cytomat.hs_" }
 namespace _Method { #include "ShouLabFunctions_DS.hs_" }
 namespace _Method { #include "HSLFilLib.hsl" }
 namespace _Method { #include "shou_error_codes.hs_" }
 namespace _Method { #include "shou_ReadFluoescence.hs_" }
 namespace _Method { #include "shou_ReadOD.hs_" }
 namespace _Method { #include "shou_EvoYeastDB.hs_" }
 namespace _Method { #include "shou_Stacking.hs_" }
 namespace _Method { #include "shou_Teleshake.hs_" }
#include "LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.res"
 namespace _Method { #include "shou_SendEmail.hs_" }
 namespace _Method { #include "C:\\Program Files\\HAMILTON\\Submethods\\shou_FileProcessing.hs_" }
 namespace _Method { #include "HSLMthLib.hsl" }
variable strTaskFolder;
variable IsSimulation;
variable V_OD_sample;
variable Run_id;
variable plate_present;
variable dummy;
dialog dialogHandle_1;
variable nChannels;
variable TargetWellVolume;
variable CorrectDW1000Vol;
variable RawODFilePath;
variable OdExportPath;
variable InoculationOD;
variable DbQueryIndex;
variable BackgroundOD;
variable ODConversionFactor;
variable OKIs_1;
variable MaxIteration;
variable TopFractionToPropagate;
global device ML_STAR ("LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.lay", "ML_STAR", hslTrue);
global device HxGen5 ("LabProtocols\\Experiments\\Decks\\SpatialEvolution3OD384Well.lay", "HxGen5", hslTrue);
variable gw_Axygen_trough;
variable RawFlEx482Em510FilePath;
variable FlEx482Em510ExportPath;
variable FlEx587Em611ExportPath;
variable RawFlEx587Em611FilePath;
variable measure_OD;
variable use_OD;
variable plates_available;
variable space_available;
variable EmailFilePath;
dialog dialogHandle_2;
dialog dialogHandle_3;
dialog dialogHandle_4;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    private variable PlateBarcode;
    private variable str_ErrorMessage;
    private variable CancelRetryPressed;
    private variable error_code;
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    SHOU_WASH::_InitLibrary();
    SHOU_ERRORCLEANUP::_InitLibrary();
    SHOU_BARCODEREAD::_InitLibrary();
    SHOU_READOD::_InitLibrary();
    SHOU_CYTOMAT::_InitLibrary();
    SHOULABFUNCTIONS_DS::_InitLibrary();
    SHOU_ERROR_CODES::_InitLibrary();
    SHOU_READFLUOESCENCE::_InitLibrary();
    SHOU_EVOYEASTDB::_InitLibrary();
    SHOU_STACKING::_InitLibrary();
    SHOU_TELESHAKE::_InitLibrary();
    SHOU_SENDEMAIL::_InitLibrary();
    SHOU_FILEPROCESSING::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    TrcTrace(Translate("BEGIN Champions_Fl->Method >>>>>>>>>>>>>>>>>>>>"), Translate(""));
    error_code = SHOU_EVOYEASTDB::EvoYeastDB_Open(str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling EvoYeastDB_Open"), str_ErrorMessage);
      abort;
    }
    if(0){
      EmailFilePath = StrConcat2(Translate("C:\Users\Hamilton\Desktop\share"), Translate(""));
      SHOU_SENDEMAIL::SendEmail_Start(EmailFilePath);
    }
    measure_OD = 0;
    use_OD = 0;
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    error_code = SHOU_ERROR_CODES::shou_error_codes_Open();
    gw_Axygen_trough = 84.0;
    CancelRetryPressed = 4;
    {
      while (CancelRetryPressed == 4)
      {
        onerror goto errLabel_5 ;
        err.Clear();
        {
          	HxGen5._D8B7B31B_B786_4BCE_B07B_73EF0C1331FD("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"); // Connect
        }
        {
          	HxGen5._32329F7E_01A2_4F5E_9B4D_8AE1784121B7("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"); // CarrierOut
        }
        {
          	HxGen5._E7B59323_6EC3_4628_90DF_D4797A4E76F3("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"); // CarrierIn
        }
        {
          	HxGen5._32329F7E_01A2_4F5E_9B4D_8AE1784121B7("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"); // CarrierOut
        }
        {
          	HxGen5._49099CB8_6A03_4CA3_81A9_E9374A74E86B("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"); // Disconnect
        }
        CancelRetryPressed = 0;
        errLabel_5 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          dialogHandle_1.SetOutput(Translate("Press Cancel to Abort"), "\n");
          CancelRetryPressed = dialogHandle_1.ShowOutput(Translate("UW plate reader not responding"), hslRetryCancel | hslError | hslDefButton1, 60);
          if (CancelRetryPressed != 4)
          {
            str_ErrorMessage = StrConcat2(str_ErrorMessage, Translate("\n Synergy MX plate reader not responding."));
            TrcTrace(Translate("error:   "), str_ErrorMessage);
            abort;
          }
        }   /* end if from skip handler if no error */
      }
    }
    Run_id = Util::GetUniqueRunId();
    strTaskFolder = Translate("C:\\EvoTaskFiles\\");
    V_OD_sample = 150;
    TargetWellVolume = 800;
    InoculationOD = 0.01;
    BackgroundOD = 0.036;
    ODConversionFactor = 2.52;
    OdExportPath = StrConcat4(Translate("C:\\EvoRawODfiles\\"), Run_id, Translate("_OD."), Translate("txt"));
    FlEx482Em510ExportPath = StrConcat4(Translate("C:\\EvoRawFlEx482Em510files\\"), Run_id, Translate("_FL."), Translate("txt"));
    FlEx587Em611ExportPath = StrConcat4(Translate("C:\\EvoRawFlEx587Em611files\\"), Run_id, Translate("_FL."), Translate("txt"));
    DbQueryIndex = 0;
    RawODFilePath = Translate("C:\\Program Files\\HAMILTON\\Gen5Data\\OD_data");
    RawFlEx482Em510FilePath = Translate("C:\\Program Files\\HAMILTON\\Gen5Data\\FlEx482Em510_data");
    RawFlEx587Em611FilePath = Translate("C:\\Program Files\\HAMILTON\\Gen5Data\\FlEx587Em611_data");
    IsSimulation = 1;
    nChannels = 8;
    CorrectDW1000Vol = 41;
    error_code = SHOU_BARCODEREAD::BarcodeRead_Unlode_1mlShort(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Barcode, PlateBarcode, 1, plate_present, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:shou_BarcodeRead->BarcodeRead"), Translate("error in main method"), str_ErrorMessage);
      abort;
    }
    IsSimulation = HSLML_STAR::IsSimulatorMode(ML_STAR);
    if (IsSimulation == 1)
    {
      dialogHandle_4.SetInputSize(1);
      dialogHandle_4.SetInputField(0, Translate("Plate_present"), hslInteger, 1);
      str_ErrorMessage = dialogHandle_4.ShowInput(Translate("You are In Simulation Mode, Decide Which Iteration to Test"), hslInfinite, hslOKOnly | hslDefButton1);
      plate_present = dialogHandle_4.GetInputField(0);
    }
    if(0){
      error_code = SHOULABFUNCTIONS_DS::ShouLabFunctions_Open(ML_STAR, strTaskFolder, nChannels, ML_STAR.WasteStation, ML_STAR.SEQ_washH2O, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, OKIs_1, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling ShouLabFunctions_Open"), str_ErrorMessage);
        abort;
      }
      error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack(ML_STAR, ML_STAR.DW_source_stack, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack"), str_ErrorMessage);
        abort;
      }
      if (plates_available == 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in DW stack"), str_ErrorMessage);
        abort;
      }
      error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack(ML_STAR, ML_STAR.DW_dirty_stack, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack"), str_ErrorMessage);
        abort;
      }
      if (plates_available == 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in DW dirty stack"), str_ErrorMessage);
        abort;
      }
      error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.Corning_Lid, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid"), str_ErrorMessage);
        abort;
      }
      if (plates_available == 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in 12mm lid stack"), str_ErrorMessage);
        abort;
      }
      error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateDirtyLids12mm, ML_STAR.Corning_Lid, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 1, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid"), str_ErrorMessage);
        abort;
      }
      if (plates_available == 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in 12mm lid dirty stack"), str_ErrorMessage);
        abort;
      }
    }
    if (plate_present == 1)
    {
      if(0){
        BeginNewExperiment(PlateBarcode);
      }
      BeginNewExperiment_Python(PlateBarcode);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:shou_BarcodeRead->BarcodeRead"), Translate("error calling BeginNewExperiment"), str_ErrorMessage);
        abort;
      }
    }
    else
    {
      if(0){
        ContinueOngoingExperiment();
      }
      ContinueOngoingExperiment_Python();
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:shou_BarcodeRead->BarcodeRead"), Translate("error calling ContinueOngoingExperiment"), str_ErrorMessage);
        abort;
      }
    }
    if (IsSimulation != 1)
    {
      error_code = SHOU_WASH::shou_Wash_Rinse(ML_STAR, ML_STAR.Dirty300ulTips, ML_STAR.Dirty1000ulTips, ML_STAR.SEQ_washH2O, ML_STAR.WasteStation, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling shou_Wash_Rinse"), str_ErrorMessage);
        abort;
      }
      error_code = SHOULABFUNCTIONS_DS::SaveTips(ML_STAR, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling ShouLabFunctions->SaveTips"), str_ErrorMessage);
        abort;
      }
    }
    error_code = SHOULABFUNCTIONS_DS::ShouLabFunctions_Close(ML_STAR, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling ShouLabFunctions->Close"), str_ErrorMessage);
      abort;
    }
    error_code = SHOU_EVOYEASTDB::EvoYeastDB_Close(str_ErrorMessage);
    if(0){
      SHOU_SENDEMAIL::SendEmail_End(EmailFilePath);
    }
    TrcTrace(Translate("END Champions_Fl->Method >>>>>>>>>>>>>>>>>>>>"), Translate(""));
    SHOU_WASH::_ExitLibrary();
    SHOU_ERRORCLEANUP::_ExitLibrary();
    SHOU_BARCODEREAD::_ExitLibrary();
    SHOU_READOD::_ExitLibrary();
    SHOU_CYTOMAT::_ExitLibrary();
    SHOULABFUNCTIONS_DS::_ExitLibrary();
    SHOU_ERROR_CODES::_ExitLibrary();
    SHOU_READFLUOESCENCE::_ExitLibrary();
    SHOU_EVOYEASTDB::_ExitLibrary();
    SHOU_STACKING::_ExitLibrary();
    SHOU_TELESHAKE::_ExitLibrary();
    SHOU_SENDEMAIL::_ExitLibrary();
    SHOU_FILEPROCESSING::_ExitLibrary();
  } }
