private function BeginNewExperiment( variable NewPlateBarcode ) variable ;
private function BeginNewExperiment_Python( variable NewPlateBarcode ) variable ;
private function ContinueOngoingExperiment(  ) variable ;
private function ContinueOngoingExperiment_Python(  ) variable ;
private function CytomatLoadWithRetry( sequence & SEQ_source_DW_plate, variable cytomat_slot, sequence & SEQ_target_cytomat, sequence & SEQ_source_lid, variable & str_ErrorMessage ) variable ;
private function FillUpControls( sequence & DestinationPlate, variable & str_ErrorMessage ) variable ;
private function InspectAndFixVolumes( sequence & Seq, variable & Volumes[], variable Message, variable & str_ErrorMessage ) variable ;
private function Propagate( sequence & seqWellsToPropagate, variable & MeasuredVolumesBeforeSampling[], variable IDofPlateToPropagate, variable & str_ErrorMessage ) variable ;
private function Propagate_Python( variable & MeasuredVolumesBeforeSampling[], variable IDofPlateToPropagate, variable & str_ErrorMessage ) variable ;
private function PurgeRetiredPlatesAddExpansion( variable & str_ErrorMessage ) variable ;
private function ReadAndStoreFluorescence( variable PlateBarcode, variable PlateID, variable & str_ErrorMessage ) variable ;
private function ReadAndStoreFluorescence_Python( variable PlateBarcode, variable PlateID, variable & str_ErrorMessage ) variable ;
private function ReadAndStoreODs( variable PlateBarcode, variable PlateID, variable & str_ErrorMessage ) variable ;
private function ReportStatus( variable MessageTxt1, variable MessageTxt2, variable MessageTxt3, variable & str_ErrorMessage ) variable ;
private function RetrieveAndSetGlobalParameters( variable strUserDefinedExperimentID, variable & str_ErrorMessage ) variable ;
private function RetryCytomatLoadOrAbort( sequence & SEQ_Source, variable cytomat_plate_slot, variable str_ErrorMessage, sequence & SEQ_LidPosition ) variable ;
private function StartingTipsPresent( sequence & TipsSequence, variable & TipPresentCount, variable & str_ErrorMessage ) variable ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  private variable error_code;
  SHOU_ERRORCLEANUP::shou_ErrorCleanup(ML_STAR, port_Relay_Wash, data_Relay_Wash, port_DAQ_Wash, data_DAQ_Wash, ML_STAR.WasteStation, ML_STAR.SEQ_washH2O, ML_STAR.Dirty300ulTips, ML_STAR.Dirty1000ulTips, 0, ML_STAR.COREGripTool_OnWaste_1000ul_0002);
  SHOULABFUNCTIONS_DS::SaveTips(ML_STAR, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, g_str_ErrorMessage);
  error_code = SHOULABFUNCTIONS_DS::ShouLabFunctions_Close(ML_STAR, g_str_ErrorMessage);
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Close(g_str_ErrorMessage);
  SHOU_ERROR_CODES::shou_error_codes_OnAbort(g_str_ErrorMessage);
}

private function BeginNewExperiment( variable NewPlateBarcode ) variable {
  private dialog dialogHandle_1;
  private variable OkCancel;
  private variable strCreateNewExperiment;
  private variable strUserExperimentID;
  private variable PlateID;
  private variable bIsError;
  private variable WellAssignmentsFileName;
  private variable CytomatPos;
  private variable strExcelSheetVols;
  private variable dbResponse;
  private file filPlateID_Cytomat;
  private variable CtrlsSrcVols[];
  private variable CulturesSrcVols[];
  private variable ErrorMessage;
  private variable IteratedPlateID;
  private variable OdSamplesPlateID;
  private sequence OD_CulturesSeq;
  private sequence CulturesSeq;
  private variable IsComponentFound;
  private variable i;
  private variable iDestWellID_Len;
  private variable IsMediaFound;
  private variable strSrcWellID;
  private variable v;
  private variable strDestWellId;
  private sequence OD_MediaCtrlSeq;
  private sequence MediaCtrlSeq;
  private file filFluidPatterns;
  private variable w;
  private variable bcp_ImportPattern;
  private variable strBcodeWellAssignment;
  private variable n;
  private variable str_ErrorMessage;
  private variable strCommenceNewExperiment;
  private file filWellAssignments;
  private variable ExpansionPlateBarcode;
  private variable strExpansionPlatePosQuery;
  private file filExpansionPlatePos;
  private variable error_code;
  private variable barcode;
  private variable bPlateFound;
  private dialog dialogHandle_2;
  private dialog dialogHandle_3;
  private dialog dialogHandle_4;
  private dialog dialogHandle_5;
  private dialog dialogHandle_6;
  private dialog dialogHandle_7;
  TrcTrace(Translate("BEGIN Champions_Fl->BeginNewExperiment --------------------------"), Translate(""));
  error_code = ReportStatus(Translate("New experiment"), Translate(""), Translate(""), str_ErrorMessage);
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("ChampionsFl_Initial"), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling shou_EvoYeastDB_Backup"), str_ErrorMessage);
    return (error_code);
  }
  error_code = 0;
  CulturesSrcVols.SetSize(0);
  CtrlsSrcVols.SetSize(0);
  WellAssignmentsFileName = StrConcat4(strTaskFolder, Run_id, Translate("_cultures_controls."), Translate("txt"));
  dbResponse = StrConcat4(strTaskFolder, Run_id, Translate("_dbresponse"), Translate(".txt"));
  dialogHandle_1.SetInputSize(2);
  dialogHandle_1.SetInputField(0, Translate("Click button to browse for file"), hslString, "");
  dialogHandle_1.SetInputField(1, Translate("Provide ID for new experiment"), hslString, "");
  OkCancel = dialogHandle_1.ShowInput(Translate("New experiment. Specify the file with the culture pattern"), hslInfinite, hslOKCancel | hslDefButton2);
  strExcelSheetVols = dialogHandle_1.GetInputField(0);
  strUserExperimentID = dialogHandle_1.GetInputField(1);
  if (OkCancel == 2)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("cancelled by user"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack(ML_STAR, ML_STAR.DW_source_stack, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack"), str_ErrorMessage);
    abort;
  }
  if (plates_available == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in DW stack"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack(ML_STAR, ML_STAR.DW_dirty_stack, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack"), str_ErrorMessage);
    abort;
  }
  if (space_available == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in DW dirty stack"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.Corning_Lid, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid"), str_ErrorMessage);
    abort;
  }
  if (plates_available == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in 12mm lid stack"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateDirtyLids12mm, ML_STAR.Corning_Lid, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 1, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid"), str_ErrorMessage);
    abort;
  }
  if (space_available == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in 12mm lid dirty stack"), str_ErrorMessage);
    abort;
  }
  error_code = SHOULABFUNCTIONS_DS::ShouLabFunctions_Open(ML_STAR, strTaskFolder, nChannels, ML_STAR.WasteStation, ML_STAR.SEQ_washH2O, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, OKIs_1, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling ShouLabFunctions_Open"), str_ErrorMessage);
    abort;
  }
  error_code = RetrieveAndSetGlobalParameters(strUserExperimentID, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling RetrieveAndSetGlobalParameters"), str_ErrorMessage);
    return (error_code);
  }
  if(0){
    onerror goto errLabel_8 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_8 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("get plate error, removing culture plate lid"), str_ErrorMessage);
      return (shou_error_CORE);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_9 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_9 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("place plate error, removing culture plate lid"), str_ErrorMessage);
      return (shou_error_CORE);
    }   /* end if from skip handler if no error */
  }
  if (measure_OD != 0)
  {
    if(0){
      error_code = SHOULABFUNCTIONS_DS::GetLidFromStack(ML_STAR, ML_STAR.OD_plates_stack, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling SHOULABFUNCTIONS_DS::GetLidFromStack"), str_ErrorMessage);
        return (error_code);
      }
      if (bPlateFound == 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("OD plate not found in stack"), str_ErrorMessage);
        return (shou_error_LabwareNotFound);
      }
      onerror goto errLabel_10 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_10 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("Error returning plate to stack"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
    }
  }
  onerror goto errLabel_11 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_11 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("CO-RE error getting plate from stack"), str_ErrorMessage);
    return (shou_error_LabwareNotFound);
  }   /* end if from skip handler if no error */
  if(0){
    error_code = SHOULABFUNCTIONS_DS::GetPlateFromStack(ML_STAR, ML_STAR.DW_source_stack, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling GetPlateFromStack"), str_ErrorMessage);
      return (error_code);
    }
    if (bPlateFound == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("DW plate not found in stack"), str_ErrorMessage);
      return (shou_error_LabwareNotFound);
    }
  }
  onerror goto errLabel_12 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_12 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("CO-RE error placing plate"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  error_code = SHOU_BARCODEREAD::BarcodeRead(ML_STAR, ML_STAR.SpatialEvoSpillOverPlate, ML_STAR.SpatialEvoSpillOverPlate, ML_STAR.Corning_Barcode, ExpansionPlateBarcode, dummy, 1, plate_present);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling shou_BarcodeRead"), str_ErrorMessage);
    return (error_code);
  }
  if (plate_present == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error plate missing in shou_BarcodeRead"), str_ErrorMessage);
    return (shou_error_MethodFailure);
  }
  strCreateNewExperiment = StrConcat12(Translate("sqlcmd -S HAMILTON-PC\\HAMILTON -d EvoYeast -Q \"EXEC dbo.Evo_NewExperiment '"), strUserExperimentID, Translate("', '"), NewPlateBarcode, Translate("', '"), ExpansionPlateBarcode, Translate("' "), Translate(""), Translate(""), Translate(""), Translate("\" -W -h -1 -s , -o "), dbResponse);
  Util::SyncShell(strCreateNewExperiment, 1, 1);
  error_code = SHOULABFUNCTIONS_DS::IsDatabaseError(dbResponse, ErrorMessage, bIsError);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling isDatabaseError"), str_ErrorMessage);
    return (error_code);
  }
  if (bIsError != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: database error"), str_ErrorMessage);
    return (shou_error_EvoYeastDB);
  }
  onerror goto errLabel_13 ;
  err.Clear();
  filPlateID_Cytomat.SetExtendedProperties( "HDR=NO");
  filPlateID_Cytomat.AddField(1, PlateID, hslInteger);
  filPlateID_Cytomat.AddField(2, CytomatPos, hslInteger);
  filPlateID_Cytomat.SetDelimiter(hslCSVDelimited);
  if( 0 == filPlateID_Cytomat.Open(dbResponse, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, dbResponse, "HxMetEdCompCmd");
  }
  if( 0 == filPlateID_Cytomat.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != filPlateID_Cytomat.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filPlateID_Cytomat.RemoveFields();
  errLabel_13 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: file error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  IteratedPlateID = SeqGetLabwareId(ML_STAR.SpatialEvoPlate);
  if(0){
    if (measure_OD != 0)
    {
    }
  }
  OdSamplesPlateID = SeqGetLabwareId(ML_STAR.ODMeasuringPlate);
  filFluidPatterns.AddField("Destination", strDestWellId, hslString, 255);
  filFluidPatterns.AddField("Source", strSrcWellID, hslString, 255);
  filFluidPatterns.AddField("Vol", v, hslFloat);
  if( 0 == filFluidPatterns.Open(strExcelSheetVols + " " + "DestinationPlate", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strExcelSheetVols, "HxMetEdCompCmd");
  }
  {
    i = 0;
    while (
       (filFluidPatterns.Eof() == 0)
    )
    {
      i = i + 1;
      if( 0 == filFluidPatterns.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      iDestWellID_Len = 0;
      iDestWellID_Len = StrGetLength(strDestWellId);
      if (iDestWellID_Len > 0)
      {
        if (strSrcWellID != "T")
        {
          IsComponentFound = SeqLookupPosition(CulturesSeq, IteratedPlateID, strDestWellId, 1, 1);
          if (IsComponentFound == 0)
          {
            SeqAdd(CulturesSeq, IteratedPlateID, strDestWellId);
            SeqAdd(OD_CulturesSeq, OdSamplesPlateID, strDestWellId);
          }
        }
      }
      else
      {
        break;
      }
    }
  }
  if( 0 != filFluidPatterns.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filFluidPatterns.RemoveFields();
  filFluidPatterns.AddField("Destination", strDestWellId, hslString, 255);
  filFluidPatterns.AddField("Source", strSrcWellID, hslString, 255);
  filFluidPatterns.AddField("Vol", v, hslFloat);
  if( 0 == filFluidPatterns.Open(strExcelSheetVols + " " + "DestinationPlate", hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strExcelSheetVols, "HxMetEdCompCmd");
  }
  {
    i = 0;
    while (
       (filFluidPatterns.Eof() == 0)
    )
    {
      i = i + 1;
      if( 0 == filFluidPatterns.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      iDestWellID_Len = 0;
      iDestWellID_Len = StrGetLength(strDestWellId);
      if (iDestWellID_Len > 0)
      {
        if (strSrcWellID == "T")
        {
          IsComponentFound = SeqLookupPosition(CulturesSeq, IteratedPlateID, strDestWellId, 1, 1);
          if (IsComponentFound == 0)
          {
            IsMediaFound = SeqLookupPosition(MediaCtrlSeq, IteratedPlateID, strDestWellId, 1, 1);
            if (IsMediaFound == 0)
            {
              SeqAdd(MediaCtrlSeq, IteratedPlateID, strDestWellId);
              SeqAdd(OD_MediaCtrlSeq, OdSamplesPlateID, strDestWellId);
            }
          }
        }
      }
      else
      {
        break;
      }
    }
  }
  if( 0 != filFluidPatterns.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filFluidPatterns.RemoveFields();
  error_code = SHOU_TELESHAKE::shou_Teleshake_open(ML_STAR, Run_id, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("test_shou_teleshake"), Translate("open_error"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_TELESHAKE::shou_Teleshake_ShakeDW(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Teleshake, str_ErrorMessage);
  error_code = SHOU_TELESHAKE::shou_Teleshake_close(str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("test_shou_teleshake"), Translate("teleshake_close_error"), str_ErrorMessage);
    abort;
  }
  onerror goto errLabel_14 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_14 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error removing lid"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_15 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_15 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error placing lid"), str_ErrorMessage);
    return (shou_error_LabwareNotFound);
  }   /* end if from skip handler if no error */
  error_code = ReadAndStoreFluorescence(NewPlateBarcode, PlateID, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling ReadAndStoreFluorescence"), str_ErrorMessage);
    return (error_code);
  }
  if (measure_OD != 0)
  {
    if(0){
      error_code = SHOULABFUNCTIONS_DS::TeansferSampleTo384Plate(ML_STAR, CulturesSeq, OD_CulturesSeq, V_OD_sample, CulturesSrcVols, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method: Champions_Fl->BeginNewExperiment"), Translate("error calling ShoulLabFunctions->TransferSampleTo384Plate"), str_ErrorMessage);
        abort;
      }
      error_code = ReadAndStoreODs(NewPlateBarcode, PlateID, str_ErrorMessage);
      error_code = SHOULABFUNCTIONS_DS::PlacePlateOntoUsedStack(ML_STAR, ML_STAR.OD_Used_Plates, ML_STAR.ODMeasuringPlate, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
    }
  }
  if(0){
    dialogHandle_2.SetOutput(Translate("Opening WellAsignments file"));
    dialogHandle_2.ShowOutput(Translate("Opening WellAsignments file"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  onerror goto errLabel_16 ;
  err.Clear();
  filWellAssignments.AddField(1, strBcodeWellAssignment, hslString);
  filWellAssignments.SetDelimiter(hslAsciiText);
  if( 0 == filWellAssignments.Open(WellAssignmentsFileName, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, WellAssignmentsFileName, "HxMetEdCompCmd");
  }
  errLabel_16 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  if(0){
    dialogHandle_7.SetOutput(Run_id);
    dialogHandle_7.ShowOutput(Translate("Writing WellAsignments file, cells, with Run_id"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  {
    n = 0;
    CulturesSeq.SetCurrentPosition(1);
    while (
       (CulturesSeq.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, CulturesSeq, 1);
      n = n + 1;
      w = SeqGetPositionId(CulturesSeq);
      strBcodeWellAssignment = StrConcat8(PlateID, Translate("\t"), w, Translate("\t"), Run_id, Translate("\tCells"), Translate("\n"), Translate(""));
      onerror goto errLabel_17 ;
      err.Clear();
      if( 0 == filWellAssignments.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_17 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: file error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      SeqIncrement(CulturesSeq, 1);
      if (
         (CulturesSeq.GetCurrentPosition() > 0 && CulturesSeq.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    CulturesSeq.SetMax(CulturesSeq.GetTotal());
  }
  if(0){
    dialogHandle_4.SetOutput(Run_id);
    dialogHandle_4.ShowOutput(Translate("Writing WellAsignments file, media, with Run_ID"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  {
    n = 0;
    MediaCtrlSeq.SetCurrentPosition(1);
    while (
       (MediaCtrlSeq.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, MediaCtrlSeq, 1);
      n = n + 1;
      w = SeqGetPositionId(MediaCtrlSeq);
      strBcodeWellAssignment = StrConcat8(PlateID, Translate("\t"), w, Translate("\t"), Run_id, Translate("\tMediaCtrl\t"), Translate("\n"), Translate(""));
      onerror goto errLabel_18 ;
      err.Clear();
      if( 0 == filWellAssignments.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_18 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperimentFl"), Translate("Aborting: file error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      SeqIncrement(MediaCtrlSeq, 1);
      if (
         (MediaCtrlSeq.GetCurrentPosition() > 0 && MediaCtrlSeq.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    MediaCtrlSeq.SetMax(MediaCtrlSeq.GetTotal());
  }
  onerror goto errLabel_19 ;
  err.Clear();
  if( 0 != filWellAssignments.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filWellAssignments.RemoveFields();
  errLabel_19 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: file error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  if(0){
    dialogHandle_5.SetOutput(Run_id);
    dialogHandle_5.ShowOutput(Translate("Update database"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  bcp_ImportPattern = StrConcat4(Translate("bcp EvoYeast.dbo.ImportPlatePattern in "), WellAssignmentsFileName, Translate(" -T -c -S HAMILTON-PC\\HAMILTON"), Translate(" "));
  Util::SyncShell(bcp_ImportPattern, 1, 1);
  error_code = SHOULABFUNCTIONS_DS::IsDatabaseError(dbResponse, str_ErrorMessage, bIsError);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error calling isDatabaseError"), str_ErrorMessage);
    return (error_code);
  }
  if (bIsError != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error with bcp EvoYeast.dbo.ImportPlatePattern"), str_ErrorMessage);
    return (shou_error_EvoYeastDB);
  }
  TrcTrace(Translate("PlateID for CommenceExperiment:   "), PlateID);
  if(0){
    dialogHandle_3.SetOutput(Run_id);
    dialogHandle_3.ShowOutput(Translate("Commense experiment"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  strCommenceNewExperiment = StrConcat12(Translate("sqlcmd -S HAMILTON-PC\\HAMILTON -d EvoYeast -Q \"EXEC dbo.Evo_CommenceExperimentFl "), PlateID, Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\" -W -h -1 -s , -o "), dbResponse, Translate(""), Translate(""));
  Util::SyncShell(strCommenceNewExperiment, 1, 1);
  error_code = SHOULABFUNCTIONS_DS::IsDatabaseError(dbResponse, str_ErrorMessage, bIsError);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling isDatabaseError"), str_ErrorMessage);
    return (error_code);
  }
  if (bIsError != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error with dbo.Evo_CommenceExperimentFl "), str_ErrorMessage);
    return (shou_error_EvoYeastDB);
  }
  if(0){
    dialogHandle_6.SetOutput(Run_id);
    dialogHandle_6.ShowOutput(Translate("Fill control wells"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
  }
  error_code = FillUpControls(ML_STAR.SpatialEvoSpillOverPlate, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling FillUpControls"), str_ErrorMessage);
    return (error_code);
  }
  onerror goto errLabel_20 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_20 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("errpr picking up lid"), str_ErrorMessage);
    return (shou_error_LabwareNotFound);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_21 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_21 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error putting a new lid"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  error_code = SHOU_CYTOMAT::shou_Cytomat_Open(ML_STAR, str_ErrorMessage);
  if (error_code != shou_error_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling shou_Cytomat_Open"), str_ErrorMessage);
    return (error_code);
  }
  if(0){
    error_code = SHOULABFUNCTIONS_DS::GetPlateFromStack(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling ShouLabFunctions->GetPlateFromStack"), str_ErrorMessage);
      return (error_code);
    }
    if (bPlateFound == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("DW plate not found in stack"), str_ErrorMessage);
      return (shou_error_LabwareNotFound);
    }
  }
  if(0){
    error_code = SHOULABFUNCTIONS_DS::PlaceLidPrecisionCarrier(ML_STAR, ML_STAR.Nunc_96_DW_fresh, ML_STAR.TestProbe, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling ShouLabFunctions->PlaceLidPrecisionCarrier"), str_ErrorMessage);
      return (error_code);
    }
    onerror goto errLabel_22 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_22 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error getting 12mm lid from stack"), str_ErrorMessage);
      return (shou_error_LabwareNotFound);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_23 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_23 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error placing 12mm lid on plate"), str_ErrorMessage);
      return (shou_error_CORE);
    }   /* end if from skip handler if no error */
  }
  error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
  if (error_code != shou_error_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
    return (error_code);
  }
  if(0){
    error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW(ML_STAR, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPos, str_ErrorMessage, ML_STAR.Nunc_96_DW_BarcodeRead, ML_STAR.Nunc_96_DW_fresh, ML_STAR.Nunc_96_DW_Cytomat_lid, barcode);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling shou_Cytomat_Load_DW"), str_ErrorMessage);
      return (error_code);
    }
  }
  strExpansionPlatePosQuery = StrConcat12(Translate("sqlcmd -S HAMILTON-PC\\HAMILTON -d EvoYeast -Q \"SET NOCOUNT ON; SELECT dbo.QueryCytomatPosition('"), ExpansionPlateBarcode, Translate("')"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\" -W -h -1 -s , -o "), dbResponse);
  Util::SyncShell(strExpansionPlatePosQuery, 1, 1);
  error_code = SHOULABFUNCTIONS_DS::IsDatabaseError(dbResponse, ErrorMessage, bIsError);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling isDatabaseError"), str_ErrorMessage);
    return (error_code);
  }
  if (bIsError != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: database error"), str_ErrorMessage);
    return (shou_error_EvoYeastDB);
  }
  onerror goto errLabel_24 ;
  err.Clear();
  filExpansionPlatePos.AddField(1, CytomatPos, hslInteger);
  filExpansionPlatePos.SetDelimiter(hslCSVDelimited);
  if( 0 == filExpansionPlatePos.Open(dbResponse, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, dbResponse, "HxMetEdCompCmd");
  }
  if( 0 == filExpansionPlatePos.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  errLabel_24 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: file error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  if(0){
    error_code = SHOULABFUNCTIONS_DS::GetPlateFromStack(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling ShouLabFunctions->GetPlateFromStack"), str_ErrorMessage);
      return (error_code);
    }
    if (bPlateFound == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("DW plate not found in stack"), str_ErrorMessage);
      return (shou_error_LabwareNotFound);
    }
    error_code = SHOULABFUNCTIONS_DS::PlaceLidPrecisionCarrier(ML_STAR, ML_STAR.Nunc_96_DW_fresh, ML_STAR.TestProbe, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling ShouLabFunctions->PlaceLidPrecisionCarrier"), str_ErrorMessage);
      return (error_code);
    }
  }
  onerror goto errLabel_25 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_25 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error getting 12mm lid from stack"), str_ErrorMessage);
    return (shou_error_LabwareNotFound);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_26 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_26 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error placing 12mm lid on plate"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
  if (error_code != shou_error_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
    return (error_code);
  }
  if(0){
    error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW(ML_STAR, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, CytomatPos, str_ErrorMessage, ML_STAR.Nunc_96_DW_BarcodeRead, ML_STAR.Nunc_96_DW_fresh, ML_STAR.Nunc_96_DW_Cytomat_lid, barcode);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling shou_Cytomat_Load_DW"), str_ErrorMessage);
      return (error_code);
    }
  }
  if(0){
    error_code = CytomatLoadWithRetry(ML_STAR.SpatialEvoSpillOverPlate, CytomatPos, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.Nunc_96_DW_fresh, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling CytomatLoadWithRetry"), str_ErrorMessage);
      return (error_code);
    }
  }
  if( 0 != filExpansionPlatePos.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filExpansionPlatePos.RemoveFields();
  error_code = SHOU_CYTOMAT::shou_Cytomat_Close(ML_STAR, dummy);
  if (error_code != shou_error_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling shou_Cytomat_Close"), str_ErrorMessage);
    return (error_code);
  }
  if(0){
    error_code = SHOULABFUNCTIONS_DS::ShouLabFunctions_Close(ML_STAR, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling ShouLabFunctions->Close"), str_ErrorMessage);
      abort;
    }
  }
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("ChampionsFl_end"), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling shou_EvoYeastDB_Backup"), str_ErrorMessage);
    return (error_code);
  }
  TrcTrace(Translate("END Champions_Fl->BeginNewExperiment --------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function ContinueOngoingExperiment(  ) variable {
  private variable strProcessPlate;
  private variable strPropagateTask;
  private variable strRetrievePlateChain;
  private variable bIsError;
  private variable CytomatPos;
  private variable str_ErrorMessage;
  private variable PlateChainBarcode;
  private variable ActualPlateChainBarcode;
  private variable dbResponse;
  private file filPlateChain;
  private variable srcWellId;
  private file filPropagationTask;
  private variable SpatialEvoPlateID;
  private sequence seqCulturesToPropagate;
  private variable EvoPlateVols[];
  private variable ODMeasuringPlateID;
  private sequence seqCulturesToPropagateOD;
  private variable EvoPlateVolsTopOff[];
  private variable nWellsToPropagate;
  private variable PlateID;
  private variable numCultToPropagate;
  private variable bPlateFound;
  private variable error_code;
  private variable EvoPlateVolsMediaFill[];
  private timer timer1;
  private variable barcode;
  private dialog dialogHandle1;
  private dialog dialogHandle_27;
  TrcTrace(Translate("BEGIN Champions_Fl->ContinueOngoingExperiment --------------------------"), Translate(""));
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("Champions_ongoing"), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling shou_EvoYeastDB_Backup"), str_ErrorMessage);
    return (error_code);
  }
  error_code = ReportStatus(Translate("Ongoing experiment"), Translate(""), Translate(""), str_ErrorMessage);
  error_code = 0;
  error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack(ML_STAR, ML_STAR.DW_source_stack, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack"), str_ErrorMessage);
    abort;
  }
  if (plates_available == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in DW stack"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack(ML_STAR, ML_STAR.DW_dirty_stack, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack"), str_ErrorMessage);
    abort;
  }
  if (plates_available == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in DW dirty stack"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.Corning_Lid, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid"), str_ErrorMessage);
    abort;
  }
  if (plates_available == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in 12mm lid stack"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateDirtyLids12mm, ML_STAR.Corning_Lid, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 1, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid"), str_ErrorMessage);
    abort;
  }
  if (plates_available == 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in 12mm lid dirty stack"), str_ErrorMessage);
    abort;
  }
  error_code = SHOULABFUNCTIONS_DS::ShouLabFunctions_Open(ML_STAR, strTaskFolder, nChannels, ML_STAR.WasteStation, ML_STAR.SEQ_washH2O, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, OKIs_1, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling ShouLabFunctions_Open"), str_ErrorMessage);
    abort;
  }
  error_code = SHOU_WASH::shou_Wash_H2O_OFF(ML_STAR, str_ErrorMessage);
  error_code = SHOU_CYTOMAT::shou_Cytomat_Open(ML_STAR, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling shou_Cytomat_Open"), str_ErrorMessage);
    return (error_code);
  }
  error_code = RetrieveAndSetGlobalParameters(Translate(""), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling RetrieveAndSetGlobalParameters"), str_ErrorMessage);
    return (error_code);
  }
  error_code = SHOU_WASH::shou_Wash_H2O_ON(ML_STAR, str_ErrorMessage);
  error_code = PurgeRetiredPlatesAddExpansion(str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling PurgeRetiredPlatesAddExpansion"), str_ErrorMessage);
    return (error_code);
  }
  error_code = SHOU_WASH::shou_Wash_H2O_OFF(ML_STAR, str_ErrorMessage);
  strPropagateTask = StrConcat4(strTaskFolder, Run_id, Translate("_propagate"), Translate(".txt"));
  dbResponse = StrConcat4(strTaskFolder, Run_id, Translate("_platechain"), Translate(".txt"));
  strRetrievePlateChain = StrConcat12(Translate("sqlcmd -S HAMILTON-PC\\HAMILTON -d EvoYeast -Q \"EXEC dbo.Evo_RetrievePlateChain "), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\" -W -h -1 -s , -o "), dbResponse, Translate(""), Translate(""), Translate(""), Translate(""));
  Util::SyncShell(strRetrievePlateChain, 1, 1);
  error_code = SHOULABFUNCTIONS_DS::IsDatabaseError(dbResponse, str_ErrorMessage, bIsError);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling isDatabaseError"), str_ErrorMessage);
    return (error_code);
  }
  if (bIsError != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: database error"), str_ErrorMessage);
    return (shou_error_EvoYeastDB);
  }
  onerror goto errLabel_28 ;
  err.Clear();
  filPlateChain.SetExtendedProperties( "HDR=NO");
  filPlateChain.AddField(1, PlateChainBarcode, hslString, 255);
  filPlateChain.AddField(2, CytomatPos, hslInteger);
  filPlateChain.SetDelimiter(hslCSVDelimited);
  if( 0 == filPlateChain.Open(dbResponse, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, dbResponse, "HxMetEdCompCmd");
  }
  errLabel_28 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file open error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  {
    while (
       (filPlateChain.Eof() == 0)
    )
    {
      onerror goto errLabel_29 ;
      err.Clear();
      if( 0 == filPlateChain.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_29 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file read error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      strProcessPlate = StrConcat12(Translate("sqlcmd -S HAMILTON-PC\\HAMILTON -d EvoYeast -Q \"EXEC dbo.SelectCultures '"), PlateChainBarcode, Translate("', '"), Run_id, Translate("'"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate("\" -W -h -1 -s , -o "), strPropagateTask);
      Util::SyncShell(strProcessPlate, 1, 1);
      error_code = SHOULABFUNCTIONS_DS::IsDatabaseError(strPropagateTask, str_ErrorMessage, bIsError);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling isDatabaseError"), str_ErrorMessage);
        return (error_code);
      }
      if (bIsError != 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: database error"), str_ErrorMessage);
        return (shou_error_EvoYeastDB);
      }
      onerror goto errLabel_30 ;
      err.Clear();
      filPropagationTask.SetExtendedProperties( "HDR=NO");
      filPropagationTask.AddField(1, PlateID, hslInteger);
      filPropagationTask.AddField(2, srcWellId, hslString, 255);
      filPropagationTask.SetDelimiter(hslCSVDelimited);
      if( 0 == filPropagationTask.Open(strPropagateTask, hslAppend) )
      {
            MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strPropagateTask, "HxMetEdCompCmd");
      }
      errLabel_30 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file open error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      SpatialEvoPlateID = SeqGetLabwareId(ML_STAR.SpatialEvoPlate);
      if (measure_OD != 0)
      {
        if(0){
          ODMeasuringPlateID = SeqGetLabwareId(ML_STAR.ODMeasuringPlate);
        }
      }
      {
        nWellsToPropagate = 0;
        while (
           (filPropagationTask.Eof() == 0)
        )
        {
          nWellsToPropagate = nWellsToPropagate + 1;
          onerror goto errLabel_31 ;
          err.Clear();
          if( 0 == filPropagationTask.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          errLabel_31 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file read error"), str_ErrorMessage);
            return (shou_error_file);
          }   /* end if from skip handler if no error */
          SeqAdd(seqCulturesToPropagate, SpatialEvoPlateID, srcWellId);
          if (measure_OD != 0)
          {
            if(0){
              SeqAdd(seqCulturesToPropagateOD, ODMeasuringPlateID, srcWellId);
            }
          }
        }
      }
      onerror goto errLabel_32 ;
      err.Clear();
      if( 0 != filPropagationTask.Close() )
      {
            MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      filPropagationTask.RemoveFields();
      errLabel_32 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file close error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      numCultToPropagate = SeqGetTotal(seqCulturesToPropagate);
      if (numCultToPropagate > 0)
      {
        if (measure_OD != 0)
        {
          if(0){
            error_code = SHOULABFUNCTIONS_DS::GetLidFromStack(ML_STAR, ML_STAR.OD_plates_stack, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
            if (bPlateFound == 0)
            {
              abort;
            }
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
          if(0){
            error_code = SHOU_CYTOMAT::shou_Cytomat_shakerOnOff(ML_STAR, 1, str_ErrorMessage);
            if( 0 == timer1.SetTimer(120) )
            {
                  MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            if( 0 == timer1.WaitTimer(hslTrue, hslFalse) )
            {
                  MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
            }
            error_code = SHOU_CYTOMAT::shou_Cytomat_shakerOnOff(ML_STAR, 0, str_ErrorMessage);
          }
        }
        if(0){
          error_code = SHOU_CYTOMAT::Cytomat_Unload_DW_lite(ML_STAR, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.Nunc_96_DW_Cytomat_lid, ML_STAR.SpatialEvoPlate, ML_STAR.LidOfSpatialEvoPlate, CytomatPos, str_ErrorMessage);
        }
        error_code = SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort"), str_ErrorMessage);
          return (error_code);
        }
        if(0){
          if (measure_OD != 0)
          {
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          }
        }
        if(0){
          error_code = SHOU_BARCODEREAD::BarcodeRead(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Barcode, ActualPlateChainBarcode, str_ErrorMessage, 1, plate_present);
        }
        error_code = SHOU_BARCODEREAD::BarcodeRead_Unlode_1mlShort(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Barcode, ActualPlateChainBarcode, 1, plate_present, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling SHOU_BARCODEREAD::BarcodeRead_Unlode_1mlShort"), str_ErrorMessage);
          return (error_code);
        }
        if (ActualPlateChainBarcode != PlateChainBarcode)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: plate missmatch platechain and shou_BarcodeRead->BarcodeRead"), str_ErrorMessage);
          return (shou_error_MethodFailure);
        }
        if(0){
          error_code = SHOULABFUNCTIONS_DS::PlacePlateOntoUsedStack(ML_STAR, ML_STAR.StackOfDWPlateDirtyLids12mm, ML_STAR.LidOfSpatialEvoPlate, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
          if (error_code != shou_error_0_NoError)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling ShouLabFunctions->PlacePlateOntoUsedStack"), str_ErrorMessage);
            return (error_code);
          }
        }
        EvoPlateVols.SetSize(0);
        dialogHandle1.SetOutput(Translate("Close when finish"));
        dialogHandle1.ShowOutput(Translate("Close When Finish"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        error_code = SHOU_TELESHAKE::shou_Teleshake_open(ML_STAR, Run_id, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("test_shou_teleshake"), Translate("open_error"), str_ErrorMessage);
          abort;
        }
        error_code = SHOU_TELESHAKE::shou_Teleshake_ShakeDW(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Teleshake, str_ErrorMessage);
        error_code = SHOU_TELESHAKE::shou_Teleshake_close(str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("test_shou_teleshake"), Translate("teleshake_close_error"), str_ErrorMessage);
          abort;
        }
        onerror goto errLabel_33 ;
        err.Clear();
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        errLabel_33 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error removing lid"), str_ErrorMessage);
          return (shou_error_CORE);
        }   /* end if from skip handler if no error */
        onerror goto errLabel_34 ;
        err.Clear();
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        errLabel_34 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error placing lid"), str_ErrorMessage);
          return (shou_error_LabwareNotFound);
        }   /* end if from skip handler if no error */
        error_code = ReadAndStoreFluorescence(ActualPlateChainBarcode, PlateID, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling ReadAndStoreFluorescence"), str_ErrorMessage);
          return (error_code);
        }
        dialogHandle_27.SetOutput(Translate("Close when finish"));
        dialogHandle_27.ShowOutput(Translate("Close When Finish"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
        if(0){
          onerror goto errLabel_35 ;
          err.Clear();
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          errLabel_35 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("get plate error, removing culture plate lid"), str_ErrorMessage);
            return (shou_error_CORE);
          }   /* end if from skip handler if no error */
          onerror goto errLabel_36 ;
          err.Clear();
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          errLabel_36 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("place plate error, removing culture plate lid"), str_ErrorMessage);
            return (shou_error_CORE);
          }   /* end if from skip handler if no error */
        }
        if (measure_OD != 0)
        {
          if(0){
            error_code = SHOULABFUNCTIONS_DS::TeansferSampleTo384Plate(ML_STAR, seqCulturesToPropagate, seqCulturesToPropagateOD, V_OD_sample, EvoPlateVols, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, str_ErrorMessage);
            if (error_code != shou_error_0_NoError)
            {
              SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method: Champions_Fl->ContinueOngoingExperiment"), Translate("error calling ShoulLabFunctions->TransferSampleTo384Plate"), str_ErrorMessage);
              abort;
            }
            error_code = ReadAndStoreODs(ActualPlateChainBarcode, PlateID, str_ErrorMessage);
            error_code = SHOULABFUNCTIONS_DS::PlacePlateOntoUsedStack(ML_STAR, ML_STAR.OD_Used_Plates, ML_STAR.ODMeasuringPlate, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
            error_code = SHOULABFUNCTIONS_DS::Debug_PrintArray(EvoPlateVols, Translate("remaining vols"), str_ErrorMessage);
            EvoPlateVolsTopOff.SetSize(nWellsToPropagate);
            EvoPlateVolsMediaFill.SetSize(nWellsToPropagate);
            {
                 variable i;
                 variable epv;
                 variable topoff_calculated;
                 for(i = 0; i < nWellsToPropagate;)
                 {
                      epv = EvoPlateVols[i];
                      topoff_calculated = (epv - V_OD_sample) * (TargetWellVolume - epv)/epv;
                      EvoPlateVolsTopOff[i] = topoff_calculated;
                      EvoPlateVolsMediaFill[i] = V_OD_sample - topoff_calculated;
                      i = i + 1;
                 }
            }
            error_code = SHOULABFUNCTIONS_DS::Debug_PrintArray(EvoPlateVolsTopOff, Translate("topoff vols"), str_ErrorMessage);
            error_code = SHOULABFUNCTIONS_DS::Debug_PrintArray(EvoPlateVolsMediaFill, Translate("Media fill vols"), str_ErrorMessage);
            error_code = InspectAndFixVolumes(seqCulturesToPropagate, EvoPlateVolsTopOff, Translate("Top off problem in "), str_ErrorMessage);
            error_code = InspectAndFixVolumes(seqCulturesToPropagate, EvoPlateVolsMediaFill, Translate("Media fill problem in "), str_ErrorMessage);
            SHOULABFUNCTIONS_DS::TopOffTipsMultiuse_v2(ML_STAR, seqCulturesToPropagate, ML_STAR.WaterTrough2, EvoPlateVolsTopOff, str_ErrorMessage, ML_STAR.WasteStation, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips);
            if (error_code != shou_error_NoError)
            {
              abort;
            }
            error_code = ReportStatus(ActualPlateChainBarcode, Translate(" "), Translate("Topoff with water"), str_ErrorMessage);
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            error_code = SHOULABFUNCTIONS_DS::TopOffTipsMultiuse_v2(ML_STAR, seqCulturesToPropagate, ML_STAR.Shou_Axygen_trough2_0001, EvoPlateVolsMediaFill, str_ErrorMessage, ML_STAR.WasteStation, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips);
            if (error_code != shou_error_NoError)
            {
              abort;
            }
            ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
            ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
            error_code = ReportStatus(ActualPlateChainBarcode, Translate(" "), Translate("OD sample vol compensated"), str_ErrorMessage);
          }
        }
        error_code = SHOU_WASH::shou_Wash_H2O_ON(ML_STAR, str_ErrorMessage);
        error_code = Propagate(seqCulturesToPropagate, EvoPlateVols, PlateID, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling Propagate"), str_ErrorMessage);
          return (error_code);
        }
        SeqRemoveAll(seqCulturesToPropagate);
        SeqRemoveAll(seqCulturesToPropagateOD);
        onerror goto errLabel_37 ;
        err.Clear();
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        errLabel_37 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("get plate error, removing culture plate lid"), str_ErrorMessage);
          return (shou_error_CORE);
        }   /* end if from skip handler if no error */
        onerror goto errLabel_38 ;
        err.Clear();
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        errLabel_38 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("place plate error, removing culture plate lid"), str_ErrorMessage);
          return (shou_error_CORE);
        }   /* end if from skip handler if no error */
        error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
        if (error_code != shou_error_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
          return (error_code);
        }
        if(0){
          error_code = SHOULABFUNCTIONS_DS::GetPlateFromStack(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
          if (error_code != shou_error_0_NoError)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling ShouLabFunctions->GetPlateFromStack"), str_ErrorMessage);
            return (error_code);
          }
          if (bPlateFound == 0)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("DW lid not found on stack"), str_ErrorMessage);
            return (shou_error_LabwareNotFound);
          }
        }
        if(0){
          error_code = SHOULABFUNCTIONS_DS::PlaceLidPrecisionCarrier(ML_STAR, ML_STAR.Nunc_96_DW_fresh, ML_STAR.TestProbe, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
          if (error_code != shou_error_0_NoError)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling ShouLabFunctions->PlaceLidPrecisionCarrier"), str_ErrorMessage);
            return (error_code);
          }
          error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW(ML_STAR, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPos, str_ErrorMessage, ML_STAR.Nunc_96_DW_BarcodeRead, ML_STAR.Nunc_96_DW_fresh, ML_STAR.Nunc_96_DW_Cytomat_lid, barcode);
          if (error_code != shou_error_NoError)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling shou_Cytomat_Load_DW"), str_ErrorMessage);
            return (error_code);
          }
        }
        if(0){
          error_code = CytomatLoadWithRetry(ML_STAR.SpatialEvoPlate, CytomatPos, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.Nunc_96_DW_fresh, str_ErrorMessage);
        }
      }
    }
  }
  error_code = SHOU_CYTOMAT::shou_Cytomat_Close(ML_STAR, dummy);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling shou_Cytomat->Close"), str_ErrorMessage);
    return (error_code);
  }
  onerror goto errLabel_39 ;
  err.Clear();
  if( 0 != filPlateChain.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filPlateChain.RemoveFields();
  errLabel_39 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("Champions_END_ongoing"), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling shou_EvoYeastDB_Backup"), str_ErrorMessage);
    return (error_code);
  }
  TrcTrace(Translate("END Champions_Fl->ContinueOngoingExperiment --------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function ReadAndStoreODs( variable PlateBarcode, variable PlateID, variable & str_ErrorMessage ) variable {
  private variable Record_Len;
  private variable i;
  private variable strBcodeWellOD;
  private variable error_code;
  private variable bcp_ImportODs;
  private variable strWellOd;
  private file filMeasuredODs;
  private file filOdsExport;
  private variable strWellAddress;
  private variable fOD;
  private variable strODval;
  private variable od_pos;
  private variable RawDataPathOD;
  TrcTrace(Translate("BEGIN_Champions_Fl->ReadAndStoreODs ---------------------------"), Translate(""));
  error_code = 0;
  if (IsSimulation != 1)
  {
    error_code = SHOU_READOD::ReadOD_384Well_nOlID(ML_STAR, str_ErrorMessage, ML_STAR.ODMeasuringPlatePickup, ML_STAR.OD_readerInputPlate, HxGen5, PlateBarcode, RawDataPathOD);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreODs"), Translate("Aborting: error calling shou_ReadOD_->ReadOD_384Well_NoLid"), str_ErrorMessage);
      return (error_code);
    }
  }
  onerror goto errLabel_40 ;
  err.Clear();
  filMeasuredODs.AddField(1, strWellOd, hslString);
  filMeasuredODs.SetDelimiter(hslAsciiText);
  if( 0 == filMeasuredODs.Open(RawODFilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, RawODFilePath, "HxMetEdCompCmd");
  }
  errLabel_40 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreODs"), Translate("file open error MeasuresODs"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  filMeasuredODs.Seek(3, hslFirst);
  onerror goto errLabel_41 ;
  err.Clear();
  filOdsExport.AddField(1, strBcodeWellOD, hslString);
  filOdsExport.SetDelimiter(hslAsciiText);
  if( 0 == filOdsExport.Open(OdExportPath, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, OdExportPath, "HxMetEdCompCmd");
  }
  errLabel_41 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreODs"), Translate("file open error ODsExport"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  {
    i = 0;
    while (
       (filMeasuredODs.Eof() == 0)
    )
    {
      i = i + 1;
      onerror goto errLabel_42 ;
      err.Clear();
      if( 0 == filMeasuredODs.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_42 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreODs"), Translate("file read error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      Record_Len = StrGetLength(strWellOd);
      if (Record_Len > 0)
      {
        od_pos = StrReverseFind(strWellOd, Translate("\t"));
        strODval = StrMid(strWellOd, od_pos, Record_Len);
        fOD = StrFVal(strODval);
        fOD = fOD - BackgroundOD;
        fOD = fOD * ODConversionFactor;
        strWellAddress = StrMid(strWellOd, 0, od_pos);
        strBcodeWellOD = StrConcat8(PlateID, Translate("\t"), strWellAddress, Translate("\t"), fOD, Translate("\t"), Run_id, Translate("\n"));
        onerror goto errLabel_43 ;
        err.Clear();
        if( 0 == filOdsExport.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        errLabel_43 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreODs"), Translate("file wriet error"), str_ErrorMessage);
          return (shou_error_file);
        }   /* end if from skip handler if no error */
      }
    }
  }
  onerror goto errLabel_44 ;
  err.Clear();
  if( 0 != filMeasuredODs.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filMeasuredODs.RemoveFields();
  if( 0 != filOdsExport.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filOdsExport.RemoveFields();
  errLabel_44 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreODs"), Translate("file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  bcp_ImportODs = StrConcat4(Translate("bcp EvoYeast.dbo.ImportSpatialEvoOD in "), OdExportPath, Translate(" -T -c -S HAMILTON-PC\\HAMILTON"), Translate(" "));
  Util::SyncShell(bcp_ImportODs, 1, 1);
  if(0){
    error_code = SHOU_EVOYEASTDB::shou_EvoYeastDataBackup(Translate("ODdata"), RawDataPathOD, str_ErrorMessage);
  }
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("OD_data"), str_ErrorMessage);
  if (error_code != error_code)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreODs"), Translate("database error"), str_ErrorMessage);
    return (error_code);
  }
  return (shou_error_0_NoError);
  TrcTrace(Translate("END_Champions_Fl->ReadAndStoreODs ---------------------------"), Translate(""));
}

private function Propagate( sequence & seqWellsToPropagate, variable & MeasuredVolumesBeforeSampling[], variable IDofPlateToPropagate, variable & str_ErrorMessage ) variable {
  private variable i;
  private variable WellID;
  private variable PlateIDRunIdWellIdCF;
  private variable CorrectionFactor;
  private variable bcp_ImportCFs;
  private variable ProcessedPlateSubsetFname;
  private file filPropagatedSubset;
  private variable sqlCommencePropagation;
  private variable PropagationTaskFname;
  private variable CultureVol;
  private variable SpillOverWellID;
  private variable MediaVol;
  private variable SourcePlateWellID;
  private variable CytomatPos;
  private variable SpillOverPlateBarcode;
  private file filPropagationTask;
  private variable SpilloverPlateID;
  private variable EvoSrcPlateID;
  private sequence seqEvoSrcPlate;
  private sequence seqSpillOverPlate;
  private variable InoculationVolumes[];
  private variable MediaVolumes[];
  private variable CurrentSpilloverBarcode;
  private variable DestinationPlateID;
  private variable UnloadedPlateCytomatPos;
  private variable error_code;
  private variable IsEnd;
  private variable mixVolume;
  private variable bPlateFound;
  private variable barcode;
  TrcTrace(Translate("BEGIN_Champions_Fl->Propagate ---------------------------"), Translate(""));
  ProcessedPlateSubsetFname = StrConcat4(strTaskFolder, Run_id, Translate("_dilution.txt"), Translate(""));
  onerror goto errLabel_45 ;
  err.Clear();
  filPropagatedSubset.AddField(1, PlateIDRunIdWellIdCF, hslString);
  filPropagatedSubset.SetDelimiter(hslAsciiText);
  if( 0 == filPropagatedSubset.Open(ProcessedPlateSubsetFname, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, ProcessedPlateSubsetFname, "HxMetEdCompCmd");
  }
  errLabel_45 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file open error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  TrcTrace(Translate("subset file opened"), Translate(""));
  TrcTraceSequence(seqWellsToPropagate);
  {
    i = 0;
    seqWellsToPropagate.SetCurrentPosition(1);
    while (
       (seqWellsToPropagate.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, seqWellsToPropagate, 1);
      i = i + 1;
      WellID = SeqGetPositionId(seqWellsToPropagate);
      CorrectionFactor = 1;
      if(0){
        CorrectionFactor = MeasuredVolumesBeforeSampling.ElementAt( i -1) / (TargetWellVolume * 1.0);
      }
      PlateIDRunIdWellIdCF = StrConcat12(IDofPlateToPropagate, Translate("\t"), Run_id, Translate("\t"), WellID, Translate("\t"), CorrectionFactor, Translate("\n"), Translate(""), Translate(""), Translate(""), Translate(""));
      TrcTrace(Translate("Writing to file.  Loop:   "), i);
      onerror goto errLabel_46 ;
      err.Clear();
      if( 0 == filPropagatedSubset.WriteRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_46 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file write error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      SeqIncrement(seqWellsToPropagate, 1);
      if (
         (seqWellsToPropagate.GetCurrentPosition() > 0 && seqWellsToPropagate.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    seqWellsToPropagate.SetMax(seqWellsToPropagate.GetTotal());
    seqWellsToPropagate.SetCurrentPosition(1);
  }
  onerror goto errLabel_47 ;
  err.Clear();
  if( 0 != filPropagatedSubset.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filPropagatedSubset.RemoveFields();
  errLabel_47 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  TrcTrace(Translate("subset file written"), Translate(""));
  bcp_ImportCFs = StrConcat4(Translate("bcp EvoYeast.dbo.ImportSpatialEvoODSubset in "), ProcessedPlateSubsetFname, Translate(" -T -c -S HAMILTON-PC\\HAMILTON"), Translate(" "));
  TrcTrace(Translate("subset sql command created"), Translate(""));
  Util::SyncShell(bcp_ImportCFs, 1, 1);
  TrcTrace(Translate("subset loaded to database"), Translate(""));
  PropagationTaskFname = StrConcat4(strTaskFolder, Run_id, Translate("_inoculate.txt"), Translate(""));
  sqlCommencePropagation = StrConcat12(Translate("sqlcmd -S HAMILTON-PC\\HAMILTON -d EvoYeast -Q \"EXEC dbo.Champions_CommencePropagationFl "), TargetWellVolume, Translate(", '"), Run_id, Translate("', "), InoculationOD, Translate(", "), TopFractionToPropagate, Translate(", "), V_OD_sample, Translate("\" -W -h -1 -s , -o "), PropagationTaskFname);
  Util::SyncShell(sqlCommencePropagation, 1, 1);
  onerror goto errLabel_48 ;
  err.Clear();
  filPropagationTask.SetExtendedProperties( "HDR=NO");
  filPropagationTask.AddField(1, CytomatPos, hslInteger);
  filPropagationTask.AddField(2, SpillOverPlateBarcode, hslString, 255);
  filPropagationTask.AddField(3, SpillOverWellID, hslString, 255);
  filPropagationTask.AddField(4, SourcePlateWellID, hslString, 255);
  filPropagationTask.AddField(5, CultureVol, hslFloat);
  filPropagationTask.AddField(6, MediaVol, hslFloat);
  filPropagationTask.AddField(7, DestinationPlateID, hslInteger);
  filPropagationTask.SetDelimiter(hslCSVDelimited);
  if( 0 == filPropagationTask.Open(PropagationTaskFname, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, PropagationTaskFname, "HxMetEdCompCmd");
  }
  errLabel_48 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file open error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_49 ;
  err.Clear();
  if( 0 == filPropagationTask.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  errLabel_49 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file read error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  IsEnd = FilEof(filPropagationTask);
  onerror goto errLabel_50 ;
  err.Clear();
  if( 0 != filPropagationTask.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filPropagationTask.RemoveFields();
  errLabel_50 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  if (IsEnd != 0)
  {
    return (shou_error_0_NoError);
  }
  onerror goto errLabel_51 ;
  err.Clear();
  filPropagationTask.SetExtendedProperties( "HDR=NO");
  filPropagationTask.AddField(1, CytomatPos, hslInteger);
  filPropagationTask.AddField(2, SpillOverPlateBarcode, hslString, 255);
  filPropagationTask.AddField(3, SpillOverWellID, hslString, 255);
  filPropagationTask.AddField(4, SourcePlateWellID, hslString, 255);
  filPropagationTask.AddField(5, CultureVol, hslFloat);
  filPropagationTask.AddField(6, MediaVol, hslFloat);
  filPropagationTask.AddField(7, DestinationPlateID, hslInteger);
  filPropagationTask.SetDelimiter(hslCSVDelimited);
  if( 0 == filPropagationTask.Open(PropagationTaskFname, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, PropagationTaskFname, "HxMetEdCompCmd");
  }
  errLabel_51 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file open error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  {
    while (
       (filPropagationTask.Eof() == 0)
    )
    {
      MediaVolumes.SetSize(0);
      InoculationVolumes.SetSize(0);
      EvoSrcPlateID = SeqGetLabwareId(ML_STAR.SpatialEvoPlate);
      SpilloverPlateID = SeqGetLabwareId(ML_STAR.SpatialEvoSpillOverPlate);
      SeqRemoveAll(seqSpillOverPlate);
      SeqRemoveAll(seqEvoSrcPlate);
      onerror goto errLabel_52 ;
      err.Clear();
      if( 0 == filPropagationTask.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_52 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file read error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      filPropagationTask.Seek(-1, hslCurrent);
      UnloadedPlateCytomatPos = -1;
      CurrentSpilloverBarcode = SpillOverPlateBarcode;
      if (DestinationPlateID != IDofPlateToPropagate)
      {
        error_code = SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort"), str_ErrorMessage);
          return (error_code);
        }
        onerror goto errLabel_53 ;
        err.Clear();
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        errLabel_53 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error removing spillover plate lid"), str_ErrorMessage);
          return (shou_error_CORE);
        }   /* end if from skip handler if no error */
        onerror goto errLabel_54 ;
        err.Clear();
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        errLabel_54 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error placing spillover plate lid on stack"), str_ErrorMessage);
          return (shou_error_LabwareNotFound);
        }   /* end if from skip handler if no error */
        if(0){
          onerror goto errLabel_55 ;
          err.Clear();
          ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
          errLabel_55 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error removing spillover plate lid"), str_ErrorMessage);
            return (shou_error_CORE);
          }   /* end if from skip handler if no error */
          onerror goto errLabel_56 ;
          err.Clear();
          ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
          errLabel_56 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error placing spillover plate lid on stack"), str_ErrorMessage);
            return (shou_error_LabwareNotFound);
          }   /* end if from skip handler if no error */
        }
        UnloadedPlateCytomatPos = CytomatPos;
      }
      else
      {
        SpilloverPlateID = EvoSrcPlateID;
      }
      {
        while (
           (filPropagationTask.Eof() == 0)
        )
        {
          onerror goto errLabel_57 ;
          err.Clear();
          if( 0 == filPropagationTask.ReadRecord() )
          {
                MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
          }
          errLabel_57 : {}
          onerror goto 0;
          if (err.GetId() != 0)   /* skip handler if no error */
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file read error"), str_ErrorMessage);
            return (shou_error_file);
          }   /* end if from skip handler if no error */
          if (CurrentSpilloverBarcode != SpillOverPlateBarcode)
          {
            filPropagationTask.Seek(-1, hslCurrent);
            break;
          }
          SeqAdd(seqSpillOverPlate, SpilloverPlateID, SpillOverWellID);
          SeqAdd(seqEvoSrcPlate, EvoSrcPlateID, SourcePlateWellID);
          InoculationVolumes.AddAsLast(CultureVol);
          MediaVolumes.AddAsLast(MediaVol);
        }
      }
      error_code = ReportStatus(Translate("Current SpillOver plate "), CurrentSpilloverBarcode, Translate(" media fill"), str_ErrorMessage);
      onerror goto errLabel_58 ;
      err.Clear();
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      errLabel_58 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("CORE error get plate"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      onerror goto errLabel_59 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_59 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("CORE error place plate"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      error_code = SHOULABFUNCTIONS_DS::TopOffTipsMultiuse_v2(ML_STAR, seqSpillOverPlate, ML_STAR.Shou_Axygen_trough2_0001, MediaVolumes, dummy, ML_STAR.WasteStation, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling ShouLabFunctions->TopOffMultiuse_v2"), str_ErrorMessage);
        return (error_code);
      }
      error_code = ReportStatus(Translate("Current SpillOver plate "), CurrentSpilloverBarcode, Translate(" inoculation started"), str_ErrorMessage);
      mixVolume = 250;
      error_code = SHOULABFUNCTIONS_DS::TransferVolumes(ML_STAR, seqEvoSrcPlate, seqSpillOverPlate, InoculationVolumes, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, mixVolume, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling ShouLabFunctions->TransferVolumes"), str_ErrorMessage);
        return (error_code);
      }
      error_code = SHOULABFUNCTIONS_DS::TopOffTipsMultiuse_DS(ML_STAR, seqEvoSrcPlate, ML_STAR.Shou_Axygen_trough2_0001, InoculationVolumes, str_ErrorMessage, ML_STAR.WasteStation, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling ShouLabFunctions->TransferVolumes"), str_ErrorMessage);
        return (error_code);
      }
      onerror goto errLabel_60 ;
      err.Clear();
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      errLabel_60 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("CORE error get plate"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      onerror goto errLabel_61 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_61 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("CORE error placet plate"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      error_code = ReportStatus(Translate("Current SpillOver plate "), CurrentSpilloverBarcode, Translate(" inoculation finished"), str_ErrorMessage);
      if (UnloadedPlateCytomatPos != -1)
      {
        onerror goto errLabel_62 ;
        err.Clear();
        ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
        errLabel_62 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->Propagate"), Translate("DW lid not found in stack"), str_ErrorMessage);
          return (shou_error_LabwareNotFound);
        }   /* end if from skip handler if no error */
        onerror goto errLabel_63 ;
        err.Clear();
        ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
        errLabel_63 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->Propagate"), Translate("errpr placing lid on plate"), str_ErrorMessage);
          return (shou_error_CORE);
        }   /* end if from skip handler if no error */
        if(0){
          error_code = SHOULABFUNCTIONS_DS::GetPlateFromStack(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
          if (error_code != shou_error_0_NoError)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling ShouLabFunctions->GetPlateFromStack"), str_ErrorMessage);
            return (error_code);
          }
          if (bPlateFound == 0)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->Propagate"), Translate("DW lid not found in stack"), str_ErrorMessage);
            return (shou_error_LabwareNotFound);
          }
          error_code = SHOULABFUNCTIONS_DS::PlaceLidPrecisionCarrier(ML_STAR, ML_STAR.Nunc_96_DW_fresh, ML_STAR.TestProbe, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
          if (error_code != shou_error_0_NoError)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling ShouLabFunctions->PlaceLidPrecisionCarrier"), str_ErrorMessage);
            return (error_code);
          }
        }
        if(0){
          error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW(ML_STAR, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, UnloadedPlateCytomatPos, str_ErrorMessage, ML_STAR.Nunc_96_DW_BarcodeRead, ML_STAR.Nunc_96_DW_fresh, ML_STAR.Nunc_96_DW_Cytomat_lid, barcode);
        }
        error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, UnloadedPlateCytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
        if (error_code != shou_error_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
          return (error_code);
        }
        if(0){
          error_code = CytomatLoadWithRetry(ML_STAR.SpatialEvoSpillOverPlate, UnloadedPlateCytomatPos, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.Nunc_96_DW_fresh, str_ErrorMessage);
          if (error_code != shou_error_0_NoError)
          {
            SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling CytomatLoadWithRetry"), str_ErrorMessage);
            return (error_code);
          }
        }
      }
    }
  }
  onerror goto errLabel_64 ;
  err.Clear();
  if( 0 != filPropagationTask.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filPropagationTask.RemoveFields();
  errLabel_64 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("Aborting: file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  return (shou_error_0_NoError);
  TrcTrace(Translate("END_Champions_Fl->Propagate ---------------------------"), Translate(""));
}

private function RetrieveAndSetGlobalParameters( variable strUserDefinedExperimentID, variable & str_ErrorMessage ) variable {
  private variable sParamValue;
  private variable error_code;
  TrcTrace(Translate("BEGIN_Champions_Fl->RetrieveAndSetGlobalParameters ---------------------------"), Translate(""));
  error_code = SHOULABFUNCTIONS_DS::RetrieveExperimentParameter(strUserDefinedExperimentID, Translate("V_OD_sample"), sParamValue, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetrieveAnsSetGlobalParameters"), Translate("error calling ShouLabFunctions->RetrieveExperimentalParameter"), str_ErrorMessage);
    return (error_code);
  }
  V_OD_sample = StrIVal(sParamValue);
  error_code = SHOULABFUNCTIONS_DS::RetrieveExperimentParameter(strUserDefinedExperimentID, Translate("TargetWellVolume"), sParamValue, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetrieveAnsSetGlobalParameters"), Translate("error calling ShouLabFunctions->RetrieveExperimentalParameter"), str_ErrorMessage);
    return (error_code);
  }
  TargetWellVolume = StrIVal(sParamValue);
  error_code = SHOULABFUNCTIONS_DS::RetrieveExperimentParameter(strUserDefinedExperimentID, Translate("InoculationOD"), sParamValue, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetrieveAnsSetGlobalParameters"), Translate("error calling ShouLabFunctions->RetrieveExperimentalParameter"), str_ErrorMessage);
    return (error_code);
  }
  InoculationOD = StrFVal(sParamValue);
  error_code = SHOULABFUNCTIONS_DS::RetrieveExperimentParameter(strUserDefinedExperimentID, Translate("BackgroundOD"), sParamValue, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetrieveAnsSetGlobalParameters"), Translate("error calling ShouLabFunctions->RetrieveExperimentalParameter"), str_ErrorMessage);
    return (error_code);
  }
  BackgroundOD = StrFVal(sParamValue);
  error_code = SHOULABFUNCTIONS_DS::RetrieveExperimentParameter(strUserDefinedExperimentID, Translate("ODConversionFactor"), sParamValue, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetrieveAnsSetGlobalParameters"), Translate("error calling ShouLabFunctions->RetrieveExperimentalParameter"), str_ErrorMessage);
    return (error_code);
  }
  ODConversionFactor = StrFVal(sParamValue);
  error_code = SHOULABFUNCTIONS_DS::RetrieveExperimentParameter(strUserDefinedExperimentID, Translate("TopFractionToPropagate"), sParamValue, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetrieveAnsSetGlobalParameters"), Translate("error calling ShouLabFunctions->RetrieveExperimentalParameter"), str_ErrorMessage);
    return (error_code);
  }
  TopFractionToPropagate = StrFVal(sParamValue);
  error_code = SHOULABFUNCTIONS_DS::RetrieveExperimentParameter(strUserDefinedExperimentID, Translate("MaxIteration"), sParamValue, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetrieveAnsSetGlobalParameters"), Translate("error calling ShouLabFunctions->RetrieveExperimentalParameter"), str_ErrorMessage);
    return (error_code);
  }
  MaxIteration = StrIVal(sParamValue);
  TrcTrace(Translate("END_Champions_Fl->RetrieveAndSetGlobalParameters ---------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function PurgeRetiredPlatesAddExpansion( variable & str_ErrorMessage ) variable {
  private variable strRetrievePlate;
  private variable strErrorText;
  private variable Barcode;
  private variable CytomatPos;
  private file filRetirePlates;
  private variable strInsertPlate;
  private variable SpillOverBcode;
  private file filAddPlate;
  private variable PlateID;
  private variable FreeMinusPermitted;
  private variable fmpw;
  private file filFreeMinusPermitted;
  private variable error_code;
  private variable bIsError;
  private variable bPlateFound;
  private variable barcode;
  private variable dbResponse_CytomatTransfer;
  private variable dbResponse_AddPlate;
  TrcTrace(Translate("BEGIN_Champions_Fl->PurgeRetiredPlatesAddExpansion ---------------------------"), Translate(""));
  error_code = 0;
  dbResponse_CytomatTransfer = StrConcat4(strTaskFolder, Run_id, Translate("_cytomattransfer"), Translate(".txt"));
  dbResponse_AddPlate = StrConcat4(strTaskFolder, Run_id, Translate("_AddPlate"), Translate(".txt"));
  strRetrievePlate = StrConcat12(Translate("sqlcmd -S HAMILTON-PC\\HAMILTON -d EvoYeast -Q \"EXEC dbo.RetirePlatesInActiveExperiment "), MaxIteration, Translate(", "), TopFractionToPropagate, Translate(""), Translate(""), Translate("\" -W -h -1 -s , -o "), dbResponse_CytomatTransfer, Translate(""), Translate(""), Translate(""), Translate(""));
  Util::SyncShell(strRetrievePlate, 1, 1);
  error_code = SHOULABFUNCTIONS_DS::IsDatabaseError(dbResponse_CytomatTransfer, strErrorText, bIsError);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling ShouLabFunctions->isDatabaseError"), str_ErrorMessage);
    return (error_code);
  }
  if (bIsError != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("Aborting: database error"), str_ErrorMessage);
    return (error_code);
  }
  onerror goto errLabel_65 ;
  err.Clear();
  filRetirePlates.SetExtendedProperties( "HDR=NO");
  filRetirePlates.AddField(1, CytomatPos, hslInteger);
  filRetirePlates.AddField(2, Barcode, hslString, 255);
  filRetirePlates.SetDelimiter(hslCSVDelimited);
  if( 0 == filRetirePlates.Open(dbResponse_CytomatTransfer, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, dbResponse_CytomatTransfer, "HxMetEdCompCmd");
  }
  errLabel_65 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("file open error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  {
    while (
       (filRetirePlates.Eof() == 0)
    )
    {
      onerror goto errLabel_66 ;
      err.Clear();
      if( 0 == filRetirePlates.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_66 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("file read error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      if(0){
        SHOU_CYTOMAT::Cytomat_Unload_DW_lite(ML_STAR, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.Nunc_96_DW_Cytomat_lid, ML_STAR.DiscardedPlate, ML_STAR.LidOfDiscardedPlate, CytomatPos, str_ErrorMessage);
      }
      error_code = SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.DiscardedPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort"), str_ErrorMessage);
        return (error_code);
      }
      onerror goto errLabel_67 ;
      err.Clear();
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      errLabel_67 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("error removing lid from plate"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      onerror goto errLabel_68 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_68 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("error placing lid on stack"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      if(0){
        error_code = SHOULABFUNCTIONS_DS::PlacePlateOntoUsedStack(ML_STAR, ML_STAR.StackOfDWPlateDirtyLids12mm, ML_STAR.LidOfDiscardedPlate, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling ShouLabFunctions->PlacePlateOntoUsedStack"), str_ErrorMessage);
          return (error_code);
        }
      }
      onerror goto errLabel_69 ;
      err.Clear();
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      errLabel_69 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("error picking up plate"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      onerror goto errLabel_70 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_70 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("error placing plate on stack"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      if(0){
        error_code = SHOULABFUNCTIONS_DS::PlacePlateOntoUsedStack(ML_STAR, ML_STAR.DW_dirty_stack, ML_STAR.DiscardedPlate, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling ShouLabFunctions->PlacePlateOntoUsedStack"), str_ErrorMessage);
          return (error_code);
        }
      }
    }
  }
  onerror goto errLabel_71 ;
  err.Clear();
  if( 0 != filRetirePlates.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filRetirePlates.RemoveFields();
  errLabel_71 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  FreeMinusPermitted = SHOULABFUNCTIONS_DS::ExecQuery(Translate("EXEC dbo.FreeMinusPermittedWellsInActiveExperiment"));
  filFreeMinusPermitted.SetExtendedProperties( "HDR=NO");
  filFreeMinusPermitted.AddField(1, fmpw, hslInteger);
  filFreeMinusPermitted.SetDelimiter(hslCSVDelimited);
  if( 0 == filFreeMinusPermitted.Open(FreeMinusPermitted, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, FreeMinusPermitted, "HxMetEdCompCmd");
  }
  if( 0 == filFreeMinusPermitted.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != filFreeMinusPermitted.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filFreeMinusPermitted.RemoveFields();
  onerror goto errLabel_72 ;
  err.Clear();
  filFreeMinusPermitted.SetExtendedProperties( "HDR=NO");
  filFreeMinusPermitted.AddField(1, fmpw, hslInteger);
  filFreeMinusPermitted.SetDelimiter(hslCSVDelimited);
  if( 0 == filFreeMinusPermitted.Open(FreeMinusPermitted, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, FreeMinusPermitted, "HxMetEdCompCmd");
  }
  if( 0 == filFreeMinusPermitted.ReadRecord() )
  {
        MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  if( 0 != filFreeMinusPermitted.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filFreeMinusPermitted.RemoveFields();
  errLabel_72 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("file error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  if (fmpw < 0)
  {
    onerror goto errLabel_73 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_73 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("file error"), str_ErrorMessage);
    }   /* end if from skip handler if no error */
    if(0){
      error_code = SHOULABFUNCTIONS_DS::GetPlateFromStack(ML_STAR, ML_STAR.DW_source_stack, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling ShouLabFunctions->GetPlateFromStack"), str_ErrorMessage);
        return (error_code);
      }
      if (bPlateFound == 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->PurgeRetiredPlatesAddExpansion"), Translate("DW plate not found in stack"), str_ErrorMessage);
        return (shou_error_LabwareNotFound);
      }
    }
    onerror goto errLabel_74 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_74 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("CORE erro place plate"), str_ErrorMessage);
      return (shou_error_CORE);
    }   /* end if from skip handler if no error */
    error_code = FillUpControls(ML_STAR.SpatialEvoSpillOverPlate, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling FillUpControls"), str_ErrorMessage);
      return (error_code);
    }
    error_code = SHOU_BARCODEREAD::BarcodeRead(ML_STAR, ML_STAR.SpatialEvoSpillOverPlate, ML_STAR.SpatialEvoSpillOverPlate, ML_STAR.Corning_Barcode, SpillOverBcode, str_ErrorMessage, 1, plate_present);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling shou_BarcodeRead->BarcodeRead"), str_ErrorMessage);
      return (error_code);
    }
    if (IsSimulation == 0)
    {
      strInsertPlate = StrConcat12(Translate("sqlcmd -S HAMILTON-PC\\HAMILTON -d EvoYeast -Q \"EXEC dbo.AddExpansionPlateToActiveExperiment '"), SpillOverBcode, Translate("' "), Translate(""), Translate(""), Translate(""), Translate("\" -W -h -1 -s , -o "), dbResponse_AddPlate, Translate(""), Translate(""), Translate(""), Translate(""));
      Util::SyncShell(strInsertPlate, 1, 1);
    }
    else
    {
      {
        event localDummyEvent1;
        if( 0 == Shell("C:\\Program Files\\HAMILTON\\Python\\Champions_FL\\ContinueOnGoingExperiment\\ContinueOnGoingExperiment_PurgeRetirePlate.exe", hslHide, hslSynchronous, localDummyEvent1, error_code) )
        {
              MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
      }
      if (error_code != 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error executing python script1"), str_ErrorMessage);
        return (error_code);
      }
    }
    onerror goto errLabel_75 ;
    err.Clear();
    filAddPlate.SetExtendedProperties( "HDR=NO");
    filAddPlate.AddField(1, CytomatPos, hslInteger);
    filAddPlate.AddField(2, PlateID, hslInteger);
    filAddPlate.SetDelimiter(hslCSVDelimited);
    if( 0 == filAddPlate.Open(dbResponse_AddPlate, hslAppend) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, dbResponse_AddPlate, "HxMetEdCompCmd");
    }
    errLabel_75 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("file open error"), str_ErrorMessage);
      return (shou_error_file);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_76 ;
    err.Clear();
    if( 0 == filAddPlate.ReadRecord() )
    {
          MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    errLabel_76 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("file read error"), str_ErrorMessage);
      return (shou_error_file);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_77 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_77 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->PurgeRetiredPlatesAddExpansion"), Translate("DW lid not found in stack"), str_ErrorMessage);
      return (shou_error_LabwareNotFound);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_78 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_78 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->PurgeRetiredPlatesAddExpansion"), Translate("errpr placing lid on plate"), str_ErrorMessage);
      return (shou_error_CORE);
    }   /* end if from skip handler if no error */
    if(0){
      error_code = SHOULABFUNCTIONS_DS::GetPlateFromStack(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.COREGripTool_OnWaste_1000ul_0002, bPlateFound, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling ShouLabFunctions->GetPlateFromStack"), str_ErrorMessage);
        return (error_code);
      }
      if (bPlateFound == 0)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->PurgeRetiredPlatesAddExpansion"), Translate("DW lid not found in stack"), str_ErrorMessage);
        return (shou_error_LabwareNotFound);
      }
      error_code = SHOULABFUNCTIONS_DS::PlaceLidPrecisionCarrier(ML_STAR, ML_STAR.Nunc_96_DW_fresh, ML_STAR.TestProbe, ML_STAR.COREGripTool_OnWaste_1000ul_0002, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PlaceLidPrecisionCarrier"), Translate("Aborting: error calling ShouLabFunctions->GetPlateFromStack"), str_ErrorMessage);
        return (error_code);
      }
    }
    error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansion"), Translate("Aborting: error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
      return (error_code);
    }
    if(0){
      error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW(ML_STAR, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, CytomatPos, str_ErrorMessage, ML_STAR.Nunc_96_DW_BarcodeRead, ML_STAR.Nunc_96_DW_fresh, ML_STAR.Nunc_96_DW_Cytomat_lid, barcode);
      if (error_code != shou_error_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("Aborting: error calling shou_Cytomat_Load_DW"), str_ErrorMessage);
        return (error_code);
      }
    }
    if(0){
      error_code = CytomatLoadWithRetry(ML_STAR.SpatialEvoSpillOverPlate, CytomatPos, ML_STAR.Nunc_96_DW_Cytomat, ML_STAR.Nunc_96_DW_fresh, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PlaceLidPrecisionCarrier"), Translate("Aborting: error calling CytomatLoadWithRetry"), str_ErrorMessage);
        return (error_code);
      }
    }
    onerror goto errLabel_79 ;
    err.Clear();
    if( 0 != filAddPlate.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    filAddPlate.RemoveFields();
    errLabel_79 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->PurgeRetiredPlatesAddExpansiont"), Translate("file close error"), str_ErrorMessage);
      return (shou_error_file);
    }   /* end if from skip handler if no error */
  }
  TrcTrace(Translate("END_Champions_Fl->PurgeRetiredPlatesAddExpansion ---------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function StartingTipsPresent( sequence & TipsSequence, variable & TipPresentCount, variable & str_ErrorMessage ) variable {
  private variable tip_count;
  private variable no_tip_error_count;
  private variable is_no_tip_error;
  private variable loopCounter1;
  private sequence scanSequence;
  TrcTrace(Translate("BEGIN_Champions_Fl->StartingTipsPresent ---------------------------"), Translate(""));
  SeqCopySequence(scanSequence, TipsSequence);
  no_tip_error_count = 0;
  tip_count = 8;
  {
    for(loopCounter1 = 0; loopCounter1 < tip_count;)
    {
      loopCounter1 = loopCounter1 + 1;
      is_no_tip_error = 0;
      onerror goto errLabel_80 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      errLabel_80 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        no_tip_error_count = no_tip_error_count + 1;
        is_no_tip_error = 1;
        SeqIncrement(scanSequence, 1);
      }   /* end if from skip handler if no error */
      if (is_no_tip_error == 0)
      {
        onerror goto errLabel_81 ;
        err.Clear();
        ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        errLabel_81 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->StartingTipsPresent"), Translate("error ejecting tips"), str_ErrorMessage);
          return (shou_error_MethodFailure);
        }   /* end if from skip handler if no error */
      }
      is_no_tip_error = 0;
    }
  }
  TipPresentCount = tip_count - no_tip_error_count;
  TrcTrace(Translate("END_Champions_Fl->StartingTipsPresent ---------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function FillUpControls( sequence & DestinationPlate, variable & str_ErrorMessage ) variable {
  private variable SilloverEvoPlateHardwareID;
  private variable WellID;
  private variable WellsToFillUpFile;
  private sequence ControlsSeq;
  private file fCtrlWells;
  private variable ControlVolumes[];
  private variable error_code;
  TrcTrace(Translate("BEGIN Champions_Fl->FillUpControls --------------------------"), Translate(""));
  WellsToFillUpFile = SHOULABFUNCTIONS_DS::ExecQuery(Translate("SELECT * FROM dbo.GetControlsForExperiment(NULL)"));
  onerror goto errLabel_82 ;
  err.Clear();
  fCtrlWells.AddField(1, WellID, hslString, 255);
  fCtrlWells.SetDelimiter(hslCSVDelimited);
  if( 0 == fCtrlWells.Open(WellsToFillUpFile, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, WellsToFillUpFile, "HxMetEdCompCmd");
  }
  errLabel_82 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->FillUpControls"), Translate("Aborting: file open error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  SilloverEvoPlateHardwareID = SeqGetLabwareId(DestinationPlate);
  ControlVolumes.SetSize(0);
  {
    while (
       (fCtrlWells.Eof() == 0)
    )
    {
      onerror goto errLabel_83 ;
      err.Clear();
      if( 0 == fCtrlWells.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_83 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->FillUpControls"), Translate("Aborting: file read error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      SeqAdd(ControlsSeq, SilloverEvoPlateHardwareID, WellID);
      ControlVolumes.AddAsLast(TargetWellVolume);
    }
  }
  onerror goto errLabel_84 ;
  err.Clear();
  if( 0 != fCtrlWells.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  fCtrlWells.RemoveFields();
  errLabel_84 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->FillUpControls"), Translate("Aborting: file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_85 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_85 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->FillUpControls"), Translate("CORE get plate error"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_86 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_86 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->FillUpControls"), Translate("CORE place plate error"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  error_code = SHOULABFUNCTIONS_DS::TopOffTipsMultiuse_v2(ML_STAR, ControlsSeq, ML_STAR.Shou_Axygen_trough2_0001, ControlVolumes, dummy, ML_STAR.WasteStation, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips);
  if (error_code != shou_error_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->FillUpControls"), Translate("error calling ShouLabFunctions->TopOffTipsMultiuse_v2"), str_ErrorMessage);
    return (error_code);
  }
  onerror goto errLabel_87 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_87 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->FillUpControls"), Translate("CORE get plate error"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_88 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_88 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->FillUpControls"), Translate("CORE place plate error"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  TrcTrace(Translate("END Champions_Fl->FillUpControls --------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function InspectAndFixVolumes( sequence & Seq, variable & Volumes[], variable Message, variable & str_ErrorMessage ) variable {
  private variable i;
  private variable str_eventlog;
  private variable ProblematicWell;
  TrcTrace(Translate("BEGIN Champions_Fl->InspectAndFixVolumes --------------------------"), Translate(""));
  str_eventlog = Translate("");
  {
    i = 0;
    Seq.SetCurrentPosition(1);
    while (
       (Seq.GetCurrentPosition() > 0)
    )
    {
      AlignSequences(hslTrue, Seq, 1);
      i = i + 1;
      if (Volumes.ElementAt( i -1) < 0)
      {
        ProblematicWell = SeqGetPositionId(Seq);
        str_eventlog = StrConcat8(Translate("EXEC dbo.LogEventInCurrentExperiment '"), Message, Translate(" "), ProblematicWell, Translate(" "), Volumes.ElementAt( i -1), Translate("'"), Translate(""));
        SHOULABFUNCTIONS_DS::ExecQuery(str_eventlog);
        Volumes[ i -1] = 0;
      }
      SeqIncrement(Seq, 1);
      if (
         (Seq.GetCurrentPosition() > 0 && Seq.GetMax() == 0 )
      )
      { MECC::EndlessSequenceLoopWarning(GetFileName()); }
    }
    Seq.SetMax(Seq.GetTotal());
  }
  TrcTrace(Translate("END Champions_Fl->InspectAndFixVolumes --------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function ReportStatus( variable MessageTxt1, variable MessageTxt2, variable MessageTxt3, variable & str_ErrorMessage ) variable {
  private variable strInsertMsg;
  private variable MessageTxt;
  TrcTrace(Translate("BEGIN_Champions_Fl->ReportStatus ---------------------------"), Translate(""));
  MessageTxt = StrConcat4(MessageTxt1, MessageTxt2, MessageTxt3, Translate(""));
  strInsertMsg = StrConcat12(Translate("INSERT INTO RunStatus Values('"), Run_id, Translate("', '"), MessageTxt, Translate("')"), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""), Translate(""));
  SHOULABFUNCTIONS_DS::ExecQuery(strInsertMsg);
  TrcTrace(Translate("END_Champions_Fl->ReportStatus ---------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function RetryCytomatLoadOrAbort( sequence & SEQ_Source, variable cytomat_plate_slot, variable str_ErrorMessage, sequence & SEQ_LidPosition ) variable {
  private dialog dialogHandle_89;
  private variable PlateLoadRetry;
  private variable error_code;
  TrcTrace(Translate("BEGIN_Champions_Fl->RetryCytomatLoadOrAbort ---------------------------"), Translate(""));
  if(0){
    error_code = SHOU_CYTOMAT::Cytomat_Load_DW_lite(ML_STAR, ML_STAR.Nunc_96_DW_Cytomat, SEQ_Source, cytomat_plate_slot, str_ErrorMessage, SEQ_LidPosition, ML_STAR.Nunc_96_DW_Cytomat_lid);
  }
  error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, SEQ_Source, cytomat_plate_slot, ML_STAR.Corning_Barcode, dummy, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetryCytomatLoadOrAbort"), Translate("error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
    return (error_code);
  }
  {
    while (error_code != 0)
    {
      TrcTrace(Translate("Cytomat error ------------------------ error_code:  "), error_code);
      if(0){
        dialogHandle_89.SetOutput(Translate("Plate load problem"));
        PlateLoadRetry = dialogHandle_89.ShowOutput(Translate("Cytomat error"), hslRetryCancel | hslError | hslDefButton1, hslInfinite);
      }
      if (PlateLoadRetry == 2)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetryCytomatLoadOrAbort"), Translate("aborted by user"), str_ErrorMessage);
        abort;
      }
      error_code = SHOU_CYTOMAT::LoadPlateFromTransferStation(cytomat_plate_slot, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->RetryCytomatLoadOrAbort"), Translate("error calling shou_Cytomat->LoadPlateFromTransferStation"), str_ErrorMessage);
        return (error_code);
      }
    }
  }
  TrcTrace(Translate("END_Champions_Fl->RetryCytomatLoadOrAbort ---------------------------"), Translate(""));
  return (shou_error_0_NoError);
}

private function CytomatLoadWithRetry( sequence & SEQ_source_DW_plate, variable cytomat_slot, sequence & SEQ_target_cytomat, sequence & SEQ_source_lid, variable & str_ErrorMessage ) variable {
  private variable baecode_DW;
  private variable error_code;
  TrcTrace(Translate("BEGIN Champions_Fl->CytomatLoadWithRetry --------------------------"), Translate(""));
  if(0){
    error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW(ML_STAR, SEQ_target_cytomat, SEQ_source_DW_plate, cytomat_slot, str_ErrorMessage, ML_STAR.Nunc_96_DW_BarcodeRead, SEQ_source_lid, ML_STAR.Nunc_96_DW_Cytomat_lid, baecode_DW);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->CytomatLoadWithRetry"), Translate("error calling shou_Cytomat_Load_DW"), str_ErrorMessage);
      return (error_code);
    }
  }
  error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, SEQ_target_cytomat, SEQ_source_DW_plate, cytomat_slot, ML_STAR.Corning_Barcode, baecode_DW, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->CytomatLoadWithRetry"), Translate("error calling shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
    return (error_code);
  }
  TrcTrace(Translate("END Champions_Fl->CytomatLoadWithRetry --------------------------"), Translate(""));
  return (shou_error_NoError);
}

private function ReadAndStoreFluorescence( variable PlateBarcode, variable PlateID, variable & str_ErrorMessage ) variable {
  private variable Record_Len;
  private variable strWellAddress;
  private variable i;
  private variable error_code;
  private variable strWellFlEx482Em510;
  private file filMeasuredFlEx482Em510;
  private variable fFl;
  private variable strBcodeWellFlEx482Em510;
  private variable fl_pos;
  private variable strFlValal;
  private variable bcp_ImportFlEx482Em510;
  private file filFlEx482Em510Export;
  private variable strWellFlEx587Em611;
  private variable strBcodeWellFlEx587Em611;
  private file filFlEx587Em611Export;
  private file filMeasuredFlEx587Em611;
  private variable bcp_ImportFlEx587Em611;
  private variable RawDataPathOD;
  MECC::TraceComment(Translate("\n\n\n\nBEGIN_Champions_Fl->ReadAndStoreFluorescence\n\n\n\n"));
  if(0){
    TrcTrace(Translate("BEGIN_Champions_Fl->ReadAndStoreFluorescence ---------------------------"), Translate(""));
  }
  error_code = 0;
  if (IsSimulation != 1)
  {
    if(0){
      error_code = SHOU_READOD::ReadOD_384Well_nOlID(ML_STAR, str_ErrorMessage, ML_STAR.ODMeasuringPlatePickup, ML_STAR.OD_readerInputPlate, HxGen5, PlateBarcode, RawDataPathOD);
      error_code = SHOU_READFLUOESCENCE::ReadFlEx482Em510_DW(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, PlateBarcode);
    }
    error_code = SHOU_READFLUOESCENCE::ReadGFPandRFP(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, PlateBarcode);
    if(0){
      error_code = SHOU_READFLUOESCENCE::ReadGFPandmOrange(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, PlateBarcode);
    }
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("Aborting: error calling shou_Fluorescence->ReadGFPandRFP"), str_ErrorMessage);
      return (error_code);
    }
  }
  onerror goto errLabel_90 ;
  err.Clear();
  filMeasuredFlEx482Em510.AddField(1, strWellFlEx482Em510, hslString);
  filMeasuredFlEx482Em510.SetDelimiter(hslAsciiText);
  if( 0 == filMeasuredFlEx482Em510.Open(RawFlEx482Em510FilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, RawFlEx482Em510FilePath, "HxMetEdCompCmd");
  }
  errLabel_90 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file open error RawFlEx483Em510 file"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  filMeasuredFlEx482Em510.Seek(3, hslFirst);
  onerror goto errLabel_91 ;
  err.Clear();
  filFlEx482Em510Export.AddField(1, strBcodeWellFlEx482Em510, hslString);
  filFlEx482Em510Export.SetDelimiter(hslAsciiText);
  if( 0 == filFlEx482Em510Export.Open(FlEx482Em510ExportPath, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, FlEx482Em510ExportPath, "HxMetEdCompCmd");
  }
  errLabel_91 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file open error FlEx483Em510Export file"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  {
    i = 0;
    while (
       (filMeasuredFlEx482Em510.Eof() == 0)
    )
    {
      i = i + 1;
      onerror goto errLabel_92 ;
      err.Clear();
      if( 0 == filMeasuredFlEx482Em510.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_92 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file read error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      Record_Len = StrGetLength(strWellFlEx482Em510);
      if (Record_Len > 0)
      {
        fl_pos = StrReverseFind(strWellFlEx482Em510, Translate("\t"));
        strFlValal = StrMid(strWellFlEx482Em510, fl_pos, Record_Len);
        fFl = StrFVal(strFlValal);
        strWellAddress = StrMid(strWellFlEx482Em510, 0, fl_pos);
        strBcodeWellFlEx482Em510 = StrConcat8(PlateID, Translate("\t"), strWellAddress, Translate("\t"), fFl, Translate("\t"), Run_id, Translate("\n"));
        onerror goto errLabel_93 ;
        err.Clear();
        if( 0 == filFlEx482Em510Export.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        errLabel_93 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file write error"), str_ErrorMessage);
          return (shou_error_file);
        }   /* end if from skip handler if no error */
      }
    }
  }
  onerror goto errLabel_94 ;
  err.Clear();
  if( 0 != filMeasuredFlEx482Em510.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filMeasuredFlEx482Em510.RemoveFields();
  if( 0 != filFlEx482Em510Export.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filFlEx482Em510Export.RemoveFields();
  errLabel_94 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  bcp_ImportFlEx482Em510 = StrConcat4(Translate("bcp EvoYeast.dbo.ImportFlEx482Em510 in "), FlEx482Em510ExportPath, Translate(" -T -c -S HAMILTON-PC\\HAMILTON"), Translate(" "));
  Util::SyncShell(bcp_ImportFlEx482Em510, 1, 1);
  onerror goto errLabel_95 ;
  err.Clear();
  filMeasuredFlEx587Em611.AddField(1, strWellFlEx587Em611, hslString);
  filMeasuredFlEx587Em611.SetDelimiter(hslAsciiText);
  if( 0 == filMeasuredFlEx587Em611.Open(RawFlEx587Em611FilePath, hslRead) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, RawFlEx587Em611FilePath, "HxMetEdCompCmd");
  }
  errLabel_95 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file open error RawFlEx587Em611 file"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  filMeasuredFlEx587Em611.Seek(3, hslFirst);
  onerror goto errLabel_96 ;
  err.Clear();
  filFlEx587Em611Export.AddField(1, strBcodeWellFlEx587Em611, hslString);
  filFlEx587Em611Export.SetDelimiter(hslAsciiText);
  if( 0 == filFlEx587Em611Export.Open(FlEx587Em611ExportPath, hslWrite) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, FlEx587Em611ExportPath, "HxMetEdCompCmd");
  }
  errLabel_96 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file open error FlEx587Em611Export file"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  {
    i = 0;
    while (
       (filMeasuredFlEx587Em611.Eof() == 0)
    )
    {
      i = i + 1;
      onerror goto errLabel_97 ;
      err.Clear();
      if( 0 == filMeasuredFlEx587Em611.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_97 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file read error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      Record_Len = StrGetLength(strWellFlEx587Em611);
      if (Record_Len > 0)
      {
        fl_pos = StrReverseFind(strWellFlEx587Em611, Translate("\t"));
        strFlValal = StrMid(strWellFlEx587Em611, fl_pos, Record_Len);
        fFl = StrFVal(strFlValal);
        strWellAddress = StrMid(strWellFlEx587Em611, 0, fl_pos);
        strBcodeWellFlEx587Em611 = StrConcat8(PlateID, Translate("\t"), strWellAddress, Translate("\t"), fFl, Translate("\t"), Run_id, Translate("\n"));
        onerror goto errLabel_98 ;
        err.Clear();
        if( 0 == filFlEx587Em611Export.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        errLabel_98 : {}
        onerror goto 0;
        if (err.GetId() != 0)   /* skip handler if no error */
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file write error"), str_ErrorMessage);
          return (shou_error_file);
        }   /* end if from skip handler if no error */
      }
    }
  }
  onerror goto errLabel_99 ;
  err.Clear();
  if( 0 != filMeasuredFlEx587Em611.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filMeasuredFlEx587Em611.RemoveFields();
  if( 0 != filFlEx587Em611Export.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filFlEx587Em611Export.RemoveFields();
  errLabel_99 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  bcp_ImportFlEx587Em611 = StrConcat4(Translate("bcp EvoYeast.dbo.ImportFlEx587Em611 in "), FlEx587Em611ExportPath, Translate(" -T -c -S HAMILTON-PC\\HAMILTON"), Translate(" "));
  Util::SyncShell(bcp_ImportFlEx587Em611, 1, 1);
  if(0){
    error_code = SHOU_EVOYEASTDB::shou_EvoYeastDataBackup(Translate("ODdata"), RawDataPathOD, str_ErrorMessage);
  }
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("Fluorescence data"), str_ErrorMessage);
  if (error_code != error_code)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("database error"), str_ErrorMessage);
    return (error_code);
  }
  return (shou_error_0_NoError);
  TrcTrace(Translate("END_Champions_Fl->ReadAndStoreFluorescence ---------------------------"), Translate(""));
}

private function BeginNewExperiment_Python( variable NewPlateBarcode ) variable {
  private variable error_code;
  private variable PlateID;
  private variable WellAssignmentsFileName;
  private variable CytomatPos;
  private variable ExpansionPlateBarcode;
  private variable str_ErrorMessage;
  private variable barcode;
  private variable dbResponse;
  private file filExpansionPlatePos;
  private variable CtrlsSrcVols[];
  private variable CulturesSrcVols[];
  private variable str_Python1;
  private variable str_Python2;
  private variable ExpansionCytomatPos;
  private variable CytomatPos_Path;
  private variable ExpansionCytomatPos_Path;
  private variable PlateID_Path;
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL_Python::BeginNewExperiment_Python -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOULABFUNCTIONS_DS::ShouLabFunctions_Open(ML_STAR, strTaskFolder, nChannels, ML_STAR.WasteStation, ML_STAR.SEQ_washH2O, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, OKIs_1, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling ShouLabFunctions_Open"), str_ErrorMessage);
    abort;
  }
  error_code = ReportStatus(Translate("New experiment"), Translate(""), Translate(""), str_ErrorMessage);
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("ChampionsFl_Initial"), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling shou_EvoYeastDB_Backup"), str_ErrorMessage);
    return (error_code);
  }
  error_code = 0;
  CulturesSrcVols.SetSize(0);
  CtrlsSrcVols.SetSize(0);
  WellAssignmentsFileName = StrConcat4(strTaskFolder, Run_id, Translate("_cultures_controls."), Translate("txt"));
  dbResponse = StrConcat4(strTaskFolder, Run_id, Translate("_dbresponse"), Translate(".txt"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nStack Initialization -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  if (IsSimulation == 0)
  {
    error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack(ML_STAR, ML_STAR.DW_source_stack, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack"), str_ErrorMessage);
      return (error_code);
    }
    if (plates_available == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in DW stack"), str_ErrorMessage);
      return (error_code);
    }
    error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack(ML_STAR, ML_STAR.DW_dirty_stack, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack"), str_ErrorMessage);
      return (error_code);
    }
    if (space_available == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in DW dirty stack"), str_ErrorMessage);
      return (error_code);
    }
    error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.Corning_Lid, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid"), str_ErrorMessage);
      return (error_code);
    }
    if (plates_available == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in 12mm lid stack"), str_ErrorMessage);
      return (error_code);
    }
    error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateDirtyLids12mm, ML_STAR.Corning_Lid, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 1, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid"), str_ErrorMessage);
      return (error_code);
    }
    if (space_available == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in 12mm lid dirty stack"), str_ErrorMessage);
      return (error_code);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nStack Initialization -- Complete\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nbarcode read of the second plate -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  if (IsSimulation == 0)
  {
    onerror goto errLabel_100 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_100 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("CO-RE error getting plate from stack"), str_ErrorMessage);
      return (shou_error_LabwareNotFound);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_101 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_101 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("CO-RE error placing plate"), str_ErrorMessage);
      return (shou_error_CORE);
    }   /* end if from skip handler if no error */
    error_code = SHOU_BARCODEREAD::BarcodeRead(ML_STAR, ML_STAR.SpatialEvoSpillOverPlate, ML_STAR.SpatialEvoSpillOverPlate, ML_STAR.Corning_Barcode, ExpansionPlateBarcode, dummy, 1, plate_present);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling shou_BarcodeRead"), str_ErrorMessage);
      return (error_code);
    }
    if (plate_present == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error plate missing in shou_BarcodeRead"), str_ErrorMessage);
      return (shou_error_MethodFailure);
    }
  }
  else
  {
    MthURandInit(100000, 999999);
    NewPlateBarcode = MthURandDraw();
    ExpansionPlateBarcode = MthURandDraw();
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nbarcode read of the second plate -- complete\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL::BeginNewExperiment::PythonModule1 -- Create New Experment in DB -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  TrcTrace(Translate("Executing 1st Python Script"), Translate(""));
  str_Python1 = StrConcat4(Translate("C:\Program Files\HAMILTON\Python\Champions_FL\BeginNewExperiment\StartNewExperiment_1.exe "), NewPlateBarcode, Translate(" "), ExpansionPlateBarcode);
  Util::SyncShell(str_Python1, 1, error_code);
  if (error_code != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error executing python script1"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL::BeginNewExperiment::PythonModule1 -- Create New Experment in DB -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nFile Processing -- PlateID; Cytomat Position for Plate1; Cytomat Position for Expansion Plate\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  PlateID_Path = StrConcat4(Translate("C:\\EvoTaskFiles\\"), Run_id, Translate("_PlateID.txt"), Translate(""));
  CytomatPos_Path = StrConcat4(Translate("C:\\EvoTaskFiles\\"), Run_id, Translate("_CytomatPos.txt"), Translate(""));
  ExpansionCytomatPos_Path = StrConcat4(Translate("C:\\EvoTaskFiles\\"), Run_id, Translate("_ExpansionCytomatPos.txt"), Translate(""));
  SHOU_FILEPROCESSING::CytomatPosProcessing(PlateID, PlateID_Path);
  TrcTrace(PlateID, Translate("PlateID"));
  SHOU_FILEPROCESSING::CytomatPosProcessing(CytomatPos, CytomatPos_Path);
  TrcTrace(CytomatPos, Translate("CytomatPos"));
  SHOU_FILEPROCESSING::CytomatPosProcessing(ExpansionCytomatPos, ExpansionCytomatPos_Path);
  TrcTrace(ExpansionCytomatPos, Translate("ExpansionCytomatPos"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nFile Processing -- PlateID; Cytomat Position for Plate1; Cytomat Position for Expansion Plate -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = RetrieveAndSetGlobalParameters(Translate(""), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling RetrieveAndSetGlobalParameters"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTeleshake -- Start\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  if (IsSimulation == 0)
  {
    error_code = SHOU_TELESHAKE::shou_Teleshake_ShakeDW(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Teleshake, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("test_shou_teleshake"), Translate("teleshake_close_error"), str_ErrorMessage);
      return (error_code);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTeleshake -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nRemove Lid For Fluorescence Reading -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  onerror goto errLabel_102 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_102 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error removing lid"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_103 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_103 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error placing lid"), str_ErrorMessage);
    return (shou_error_LabwareNotFound);
  }   /* end if from skip handler if no error */
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nRemove Lid For Fluorescence Reading -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nBeginNewExperiment_Python::ReadAndStoreFluorescence_Python -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = ReadAndStoreFluorescence_Python(NewPlateBarcode, PlateID, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling ReadAndStoreFluorescence"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nBeginNewExperiment_Python::ReadAndStoreFluorescence_Python -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL::BeginNewExperiment::PythonModule2 -- CommenceExperimentFl -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  TrcTrace(Translate("Executing 2ed Python Script"), Translate(""));
  str_Python2 = StrConcat4(Translate("C:\Program Files\HAMILTON\Python\Champions_FL\BeginNewExperiment\StartNewExperiment_2.exe "), NewPlateBarcode, Translate(" "), ExpansionPlateBarcode);
  Util::SyncShell(str_Python2, 1, error_code);
  if (error_code != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error executing python script2"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL::BeginNewExperiment::PythonModule2 -- CommenceExperimentFl -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nFillUpControl -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = FillUpControls(ML_STAR.SpatialEvoSpillOverPlate, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling FillUpControls"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nFillUpControl -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nPutOnNewLid -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  onerror goto errLabel_104 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_104 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("errpr picking up lid"), str_ErrorMessage);
    return (shou_error_LabwareNotFound);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_105 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_105 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error putting a new lid"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nPutOnNewLid -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nSendPlateToCytomat -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  if (IsSimulation == 0)
  {
    error_code = SHOU_CYTOMAT::shou_Cytomat_Open(ML_STAR, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling shou_Cytomat_Open"), str_ErrorMessage);
      return (error_code);
    }
    error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
      return (error_code);
    }
    onerror goto errLabel_106 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_106 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error getting 12mm lid from stack"), str_ErrorMessage);
      return (shou_error_LabwareNotFound);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_107 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_107 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error placing 12mm lid on plate"), str_ErrorMessage);
      return (shou_error_CORE);
    }   /* end if from skip handler if no error */
    error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, ExpansionCytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
      return (error_code);
    }
    if( 0 != filExpansionPlatePos.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    filExpansionPlatePos.RemoveFields();
    error_code = SHOU_CYTOMAT::shou_Cytomat_Close(ML_STAR, dummy);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling shou_Cytomat_Close"), str_ErrorMessage);
      return (error_code);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nSendPlateToCytomat -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nCloseAndCleanup -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("ChampionsFl_end"), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error calling shou_EvoYeastDB_Backup"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nCloseAndCleanup -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL_Python::BeginNewExperiment_Python -- COMPLETE, Return to Main Method\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  return (shou_error_0_NoError);
}

private function ContinueOngoingExperiment_Python(  ) variable {
  private variable error_code;
  private variable PlateID;
  private variable CytomatPos;
  private variable str_ErrorMessage;
  private variable PlateChainBarcode;
  private variable barcode;
  private variable ActualPlateChainBarcode;
  private sequence seqCulturesToPropagate;
  private sequence seqCulturesToPropagateOD;
  private file filPlateChain;
  private variable EvoPlateVols[];
  private variable str_CheckedPlateChain;
  private variable run_ID;
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL_Python::ContinueOngoingExperiment_Python -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("Champions_ongoing"), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling shou_EvoYeastDB_Backup"), str_ErrorMessage);
    return (error_code);
  }
  error_code = ReportStatus(Translate("Ongoing experiment"), Translate(""), Translate(""), str_ErrorMessage);
  error_code = 0;
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nStack Initialization -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  if (IsSimulation == 0)
  {
    error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack(ML_STAR, ML_STAR.DW_source_stack, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack"), str_ErrorMessage);
      return (error_code);
    }
    if (plates_available == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in DW stack"), str_ErrorMessage);
      return (error_code);
    }
    error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack(ML_STAR, ML_STAR.DW_dirty_stack, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack"), str_ErrorMessage);
      return (error_code);
    }
    if (space_available == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in DW dirty stack"), str_ErrorMessage);
      return (error_code);
    }
    error_code = SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateLids12mm, ML_STAR.Corning_Lid, plates_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 0, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeSourceStack12mmLid"), str_ErrorMessage);
      return (error_code);
    }
    if (plates_available == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no plates available in 12mm lid stack"), str_ErrorMessage);
      return (error_code);
    }
    error_code = SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid(ML_STAR, ML_STAR.StackOfDWPlateDirtyLids12mm, ML_STAR.Corning_Lid, space_available, ML_STAR.COREGripTool_OnWaste_1000ul_0002, 1, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling SHOU_STACKING::shou_Stacking_InitializeTargetStack12mmLid"), str_ErrorMessage);
      return (error_code);
    }
    if (space_available == 0)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error no space available in 12mm lid dirty stack"), str_ErrorMessage);
      return (error_code);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nStack Initialization -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nShouLabFunction Initialization -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOULABFUNCTIONS_DS::ShouLabFunctions_Open(ML_STAR, strTaskFolder, nChannels, ML_STAR.WasteStation, ML_STAR.SEQ_washH2O, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, ML_STAR.Clean300ulTips, ML_STAR.Dirty300ulTips, OKIs_1, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Method"), Translate("error calling ShouLabFunctions_Open"), str_ErrorMessage);
    return (error_code);
  }
  error_code = SHOU_WASH::shou_Wash_H2O_OFF(ML_STAR, str_ErrorMessage);
  if (IsSimulation == 0)
  {
    error_code = SHOU_CYTOMAT::shou_Cytomat_Open(ML_STAR, str_ErrorMessage);
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling shou_Cytomat_Open"), str_ErrorMessage);
      return (error_code);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nShouLabFunction Initialization -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = RetrieveAndSetGlobalParameters(Translate(""), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling RetrieveAndSetGlobalParameters"), str_ErrorMessage);
    return (error_code);
  }
  error_code = SHOU_WASH::shou_Wash_H2O_ON(ML_STAR, str_ErrorMessage);
  error_code = PurgeRetiredPlatesAddExpansion(str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling PurgeRetiredPlatesAddExpansion"), str_ErrorMessage);
    return (error_code);
  }
  error_code = SHOU_WASH::shou_Wash_H2O_OFF(ML_STAR, str_ErrorMessage);
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL::ContinueOnGoingExperiment::ConditionCheck -- Check platechain and validate -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  {
    event localDummyEvent1;
    if( 0 == Shell("C:\\Program Files\\HAMILTON\\Python\\Champions_FL\\ContinueOnGoingExperiment\\ContinueOnGoingExperiment_ConditionCheck.exe", hslHide, hslSynchronous, localDummyEvent1, error_code) )
    {
          MECC::RaiseRuntimeErrorEx(-1238499072, MECC::IDS::stepNameShell, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
  }
  if (error_code != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOnGoingExperiment"), Translate("error executing python script1"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL::ContinueOnGoingExperiment::ConditionCheck -- Check platechain and validate -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  run_ID = Util::GetUniqueRunId();
  str_CheckedPlateChain = StrConcat4(Translate("C:\\EvoTaskFiles\\"), run_ID, Translate("_PlateChainChecked.txt"), Translate(""));
  onerror goto errLabel_108 ;
  err.Clear();
  filPlateChain.SetExtendedProperties( "HDR=NO");
  filPlateChain.AddField(1, PlateChainBarcode, hslString, 255);
  filPlateChain.AddField(2, CytomatPos, hslInteger);
  filPlateChain.SetDelimiter(hslCSVDelimited);
  if( 0 == filPlateChain.Open(str_CheckedPlateChain, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, str_CheckedPlateChain, "HxMetEdCompCmd");
  }
  errLabel_108 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file open error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  {
    while (
       (filPlateChain.Eof() == 0)
    )
    {
      onerror goto errLabel_109 ;
      err.Clear();
      if( 0 == filPlateChain.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      errLabel_109 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file read error"), str_ErrorMessage);
        return (shou_error_file);
      }   /* end if from skip handler if no error */
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nGetPlateFromCytomat -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      error_code = SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort"), str_ErrorMessage);
        return (error_code);
      }
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nGetPlateFromCytomat -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nBarcodeRead of the Plate -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      error_code = SHOU_BARCODEREAD::BarcodeRead_Unlode_1mlShort(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Barcode, ActualPlateChainBarcode, 1, plate_present, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling SHOU_BARCODEREAD::BarcodeRead_Unlode_1mlShort"), str_ErrorMessage);
        return (error_code);
      }
      if (IsSimulation == 1)
      {
        ActualPlateChainBarcode = PlateChainBarcode;
      }
      if (ActualPlateChainBarcode != PlateChainBarcode)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: plate missmatch platechain and shou_BarcodeRead->BarcodeRead"), str_ErrorMessage);
        return (shou_error_MethodFailure);
      }
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nBarcodeRead of the Plate -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      EvoPlateVols.SetSize(0);
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTeleshake -- Start\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      if (IsSimulation == 0)
      {
        error_code = SHOU_TELESHAKE::shou_Teleshake_ShakeDW(ML_STAR, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_Teleshake, str_ErrorMessage);
        if (error_code != shou_error_0_NoError)
        {
          SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("test_shou_teleshake"), Translate("teleshake_close_error"), str_ErrorMessage);
          return (error_code);
          abort;
        }
      }
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTeleshake -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nRemove Lid For Fluorescence Reading -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      onerror goto errLabel_110 ;
      err.Clear();
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      errLabel_110 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error removing lid"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      onerror goto errLabel_111 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_111 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->BeginNewExperiment"), Translate("error placing lid"), str_ErrorMessage);
        return (shou_error_LabwareNotFound);
      }   /* end if from skip handler if no error */
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nRemove Lid For Fluorescence Reading -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nContinueOnGoingExperiment_Python::ReadAndStoreFluorescence_Python -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      error_code = ReadAndStoreFluorescence_Python(ActualPlateChainBarcode, PlateID, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling ReadAndStoreFluorescence"), str_ErrorMessage);
        return (error_code);
      }
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nContinueOnGoingExperiment_Python::ReadAndStoreFluorescence_Python -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      error_code = SHOU_WASH::shou_Wash_H2O_ON(ML_STAR, str_ErrorMessage);
      if(0){
        error_code = Propagate(seqCulturesToPropagate, EvoPlateVols, PlateID, str_ErrorMessage);
      }
      error_code = Propagate_Python(EvoPlateVols, PlateChainBarcode, str_ErrorMessage);
      if (error_code != shou_error_0_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling Propagate"), str_ErrorMessage);
        return (error_code);
      }
      SeqRemoveAll(seqCulturesToPropagate);
      SeqRemoveAll(seqCulturesToPropagateOD);
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nPutOnNewLid -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      onerror goto errLabel_112 ;
      err.Clear();
      ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
      errLabel_112 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("get plate error, removing culture plate lid"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      onerror goto errLabel_113 ;
      err.Clear();
      ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
      errLabel_113 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("place plate error, removing culture plate lid"), str_ErrorMessage);
        return (shou_error_CORE);
      }   /* end if from skip handler if no error */
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nPutOnNewLid -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nSendPlateToCytomat -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
      error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
      if (error_code != shou_error_NoError)
      {
        SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
        return (error_code);
      }
      MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nSendPlateToCytomat -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nCloseAndCleanup -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOU_CYTOMAT::shou_Cytomat_Close(ML_STAR, dummy);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: error calling shou_Cytomat->Close"), str_ErrorMessage);
    return (error_code);
  }
  onerror goto errLabel_114 ;
  err.Clear();
  if( 0 != filPlateChain.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  filPlateChain.RemoveFields();
  errLabel_114 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ContinueOngoingExperiment"), Translate("Aborting: file close error"), str_ErrorMessage);
    return (shou_error_file);
  }   /* end if from skip handler if no error */
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("Champions_END_ongoing"), str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->ContinueOngoingExperiment"), Translate("error calling shou_EvoYeastDB_Backup"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nCloseAndCleanup -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL_Python::ContinueOnGoingExperiment_Python -- COMPLETE, Return to Main Method\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  return (shou_error_0_NoError);
}

private function Propagate_Python( variable & MeasuredVolumesBeforeSampling[], variable IDofPlateToPropagate, variable & str_ErrorMessage ) variable {
  private variable SpilloverPlateID;
  private variable error_code;
  private variable EvoSrcPlateID;
  private variable CytomatPos;
  private variable UnloadedPlateCytomatPos;
  private variable barcode;
  private variable mixVolume;
  private sequence seqEvoSrcPlate;
  private sequence seqSpillOverPlate;
  private variable InoculationVolumes[];
  private variable MediaVolumes[];
  private variable str_PropagatePython;
  private variable path_SpatialPlateSeq;
  private variable path_CytomatPos;
  private variable path_MediaVol;
  private variable path_CultureVol;
  private variable run_ID;
  private variable path_SpillPlateSeq;
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL_Python::Propagate_Python -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL::ContinueOnGoingExperiment::PlateChain -- Calculate propagation and generate sequence file -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  EvoSrcPlateID = SeqGetLabwareId(ML_STAR.SpatialEvoPlate);
  SpilloverPlateID = SeqGetLabwareId(ML_STAR.SpatialEvoSpillOverPlate);
  TrcTrace(Translate("Executing Propagate Python Script"), Translate(""));
  str_PropagatePython = StrConcat8(Translate("C:\Program Files\HAMILTON\Python\Champions_FL\ContinueOnGoingExperiment\ContinueOnGoingExperiment_platechain.exe "), Translate("\""), IDofPlateToPropagate, Translate("\" \""), EvoSrcPlateID, Translate("\" \""), SpilloverPlateID, Translate("\""));
  TrcTrace(str_PropagatePython, Translate(""));
  Util::SyncShell(str_PropagatePython, 1, error_code);
  if (error_code != 0)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->BeginNewExperiment"), Translate("error executing python script1"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL::ContinueOnGoingExperiment::PlateChain -- Calculate propagation and generate sequence file -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nFile Processing -- Cytomat Position, Media Volume (Array), Inoculation Volume (Array), SpatialPlate Seq, SpillOverPlate Seq -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  run_ID = Util::GetUniqueRunId();
  path_CytomatPos = StrConcat4(Translate("C:\\EvoTaskFiles\\"), run_ID, Translate("_CytomatPos.txt"), Translate(""));
  path_MediaVol = StrConcat4(Translate("C:\\EvoTaskFiles\\"), run_ID, Translate("_MediaVol.txt "), Translate(""));
  path_CultureVol = StrConcat4(Translate("C:\\EvoTaskFiles\\"), run_ID, Translate("_CultureVol.txt "), Translate(""));
  path_SpatialPlateSeq = StrConcat4(Translate("C:\\EvoTaskFiles\\"), run_ID, Translate("_SpatialOverPlate.txt "), Translate(""));
  path_SpillPlateSeq = StrConcat4(Translate("C:\\EvoTaskFiles\\"), run_ID, Translate("_SpillOverPlate.txt "), Translate(""));
  SHOU_FILEPROCESSING::CytomatPosProcessing(CytomatPos, path_CytomatPos);
  MediaVolumes.SetSize(0);
  InoculationVolumes.SetSize(0);
  SHOU_FILEPROCESSING::VolumnProcessing(MediaVolumes, path_MediaVol);
  SHOU_FILEPROCESSING::VolumnProcessing(InoculationVolumes, path_CultureVol);
  SHOU_FILEPROCESSING::SeqProcessing(seqEvoSrcPlate, path_SpatialPlateSeq, ML_STAR);
  SHOU_FILEPROCESSING::SeqProcessing(seqSpillOverPlate, path_SpillPlateSeq, ML_STAR);
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nFile Processing -- Cytomat Position, Media Volume (Array), Inoculation Volume (Array), SpatialPlate Seq, SpillOverPlate Seq -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nGetPlateFromCytomat -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, CytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling SHOU_CYTOMAT::shou_Cytomat_Unload_DW_1mlShort"), str_ErrorMessage);
    return (error_code);
  }
  UnloadedPlateCytomatPos = CytomatPos;
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nGetPlateFromCytomat -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nRemove Lid For Propagation -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  onerror goto errLabel_115 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_115 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error removing spillover plate lid"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_116 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_116 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error placing spillover plate lid on stack"), str_ErrorMessage);
    return (shou_error_LabwareNotFound);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_117 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_117 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("CORE error get plate"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_118 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_118 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("CORE error place plate"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nRemove Lid For Propagation -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTopOffMedia for SpillOverPlate Base -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOULABFUNCTIONS_DS::TopOffTipsMultiuse_v2(ML_STAR, seqSpillOverPlate, ML_STAR.Shou_Axygen_trough2_0001, MediaVolumes, dummy, ML_STAR.WasteStation, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling ShouLabFunctions->TopOffMultiuse_v2"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTopOffMedia for SpillOverPlate Base -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTransferVolume of Culture -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  mixVolume = 250;
  error_code = SHOULABFUNCTIONS_DS::TransferVolumes(ML_STAR, seqEvoSrcPlate, seqSpillOverPlate, InoculationVolumes, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips, mixVolume, str_ErrorMessage);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling ShouLabFunctions->TransferVolumes"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTransferVolume of Culture -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTopOffMedia For Source Plate -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOULABFUNCTIONS_DS::TopOffTipsMultiuse_DS(ML_STAR, seqEvoSrcPlate, ML_STAR.Shou_Axygen_trough2_0001, InoculationVolumes, str_ErrorMessage, ML_STAR.WasteStation, ML_STAR.Clean1000ulTips, ML_STAR.Dirty1000ulTips);
  if (error_code != shou_error_0_NoError)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_Fl->Propagate"), Translate("error calling ShouLabFunctions->TransferVolumes"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nTopOffMedia For Source Plate -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nPut On Lid For Media Trough -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  onerror goto errLabel_119 ;
  err.Clear();
  ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
  errLabel_119 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("CORE error get plate"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  onerror goto errLabel_120 ;
  err.Clear();
  ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
  errLabel_120 : {}
  onerror goto 0;
  if (err.GetId() != 0)   /* skip handler if no error */
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->Propagate"), Translate("CORE error placet plate"), str_ErrorMessage);
    return (shou_error_CORE);
  }   /* end if from skip handler if no error */
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nPut On Lid For Media Trough -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nPut On Lid SpillOver Plate -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  if (UnloadedPlateCytomatPos != -1)
  {
    onerror goto errLabel_121 ;
    err.Clear();
    ML_STAR._A108628C_BEB7_4CB6_99FD_8523302C700F("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"); // ZSwapGetPlate
    errLabel_121 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->Propagate"), Translate("DW lid not found in stack"), str_ErrorMessage);
      return (shou_error_LabwareNotFound);
    }   /* end if from skip handler if no error */
    onerror goto errLabel_122 ;
    err.Clear();
    ML_STAR._9DF3DD4B_3B5E_4750_8989_04458D1B134B("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"); // ZSwapPlacePlate
    errLabel_122 : {}
    onerror goto 0;
    if (err.GetId() != 0)   /* skip handler if no error */
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Champions_Fl->Propagate"), Translate("errpr placing lid on plate"), str_ErrorMessage);
      return (shou_error_CORE);
    }   /* end if from skip handler if no error */
    TrcTrace(Translate("Cytomat Position For Propogation:   "), UnloadedPlateCytomatPos);
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nPut On Lid SpillOver Plate -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
    MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nSend SpillOver Plate To Cytomat -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
    error_code = SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort(ML_STAR, ML_STAR.Corning_Cytomat, ML_STAR.SpatialEvoSpillOverPlate, UnloadedPlateCytomatPos, ML_STAR.Corning_Barcode, barcode, str_ErrorMessage);
    if (error_code != shou_error_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->BeginNewExperiment"), Translate("Aborting: error calling SHOU_CYTOMAT::shou_Cytomat_Load_DW_1mlShort"), str_ErrorMessage);
      return (error_code);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nSend SpillOver Plate To Cytomat -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL_Python::Propagate_Python -- COMPLETE, Return to Main Method\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  return (shou_error_0_NoError);
}

private function ReadAndStoreFluorescence_Python( variable PlateBarcode, variable PlateID, variable & str_ErrorMessage ) variable {
  private variable error_code;
  private variable RawDataPathOD;
  private variable str_PythonSendGFPAndRFP;
  private variable str_PythonSendGFPAndRFP_Simulation;
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL_Python::ReadAndStoreFluorescence_Python -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = 0;
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nReadGFPAndRFP Using GEN5 -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  if (IsSimulation == 0)
  {
    if(0){
      error_code = SHOU_READOD::ReadOD_384Well_nOlID(ML_STAR, str_ErrorMessage, ML_STAR.ODMeasuringPlatePickup, ML_STAR.OD_readerInputPlate, HxGen5, PlateBarcode, RawDataPathOD);
      error_code = SHOU_READFLUOESCENCE::ReadFlEx482Em510_DW(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, PlateBarcode);
    }
    error_code = SHOU_READFLUOESCENCE::ReadGFPandRFP(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, PlateBarcode);
    if(0){
      error_code = SHOU_READFLUOESCENCE::ReadGFPandmOrange(ML_STAR, str_ErrorMessage, ML_STAR.SpatialEvoPlate, ML_STAR.Corning_reader, HxGen5, PlateBarcode);
    }
    if (error_code != shou_error_0_NoError)
    {
      SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("Aborting: error calling shou_Fluorescence->ReadGFPandRFP"), str_ErrorMessage);
      return (error_code);
    }
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nReadGFPAndRFP Using GEN5 -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nSend GFP and RFP Data to Database Using Python -- START\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  if (IsSimulation == 0)
  {
    if (IsTestMode != 1)
    {
      str_PythonSendGFPAndRFP = StrConcat4(Translate("C:\Program Files\HAMILTON\Python\Champions_FL\ContinueOnGoingExperiment\SendGFPAndRFPToDB.exe "), PlateBarcode, Translate(""), Translate(""));
      error_code = Util::SyncShell(str_PythonSendGFPAndRFP, 1, error_code);
    }
    else
    {
      TrcTrace(Translate("Test Mode::"), Translate("Inserting Random Readings Into DB"));
      str_PythonSendGFPAndRFP_Simulation = StrConcat4(Translate("C:\Program Files\HAMILTON\Python\Champions_FL\ContinueOnGoingExperiment\SendGFPAndRFPToDB.exe "), PlateBarcode, Translate(" "), Translate("--test-mode"));
      error_code = Util::SyncShell(str_PythonSendGFPAndRFP_Simulation, 1, error_code);
    }
  }
  else
  {
    TrcTrace(Translate("Simulation Mode::"), Translate("Inserting Random Readings Into DB"));
    str_PythonSendGFPAndRFP_Simulation = StrConcat4(Translate("C:\Program Files\HAMILTON\Python\Champions_FL\ContinueOnGoingExperiment\SendGFPAndRFPToDB.exe "), PlateBarcode, Translate(" "), Translate("--test-mode"));
    error_code = Util::SyncShell(str_PythonSendGFPAndRFP_Simulation, 1, error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nSend GFP and RFP Data to Database Using Python -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  error_code = SHOU_EVOYEASTDB::EvoYeastDB_Backup(Translate("Fluorescence data"), str_ErrorMessage);
  if (error_code != error_code)
  {
    SHOU_ERROR_CODES::shou_error_codes_UpdateErrorMessage(Translate("Method:Champions_FL->ReadAndStoreFluorescence"), Translate("database error"), str_ErrorMessage);
    return (error_code);
  }
  MECC::TraceComment(Translate(">>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n\nChampions_FL_Python::ReadAndStoreFluorescence_Python -- COMPLETE\n\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>\n>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>>"));
  return (shou_error_0_NoError);
}
